PsychoPy2experiment version="3.0.7"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [3840, 2160]
  expName = MA_Test_Run_AV_Sync
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Routines
  Routine trial
    CodeComponent runOnlyExperiment
      Code Type = Py
      Begin Routine:
        try:
            if currentLoop == experiment:
                pass
        except:
            continueRoutine = True
    CodeComponent switchToNextTrialAfterResponseTimeOver
      Code Type = Py
      Begin Routine:
        participantResponseTime = None
      Each Frame:
        if videoStimulus.status==FINISHED and participantResponseTime == None:
            participantResponseTime = trialClock.getTime()

        #switch to the next trial when the video is ended and response time (10 seconds) is over
        if participantResponseTime and trialClock.getTime() - participantResponseTime > 10:
            continueRoutine = False
    CodeComponent mapStimuliLabels
      Code Type = Py
      Begin Experiment:
        # Mappings for stimuli properties
        mapCallSign = {
          "call1": "adler",
          "call2": "drossel",
          "call3": "tiger",
          "call4": "unke"
          }

        mapColour = {
          "colour1": "gelb",
          "colour2": "gruen",
          "colour3": "rot",
          "colour4": "weiss"
          }

        mapNumber = {
          "number1": 1,
          "number2": 2,
          "number3": 3,
          "number4": 4
          }
    MovieComponent videoStimulus
      backend = moviepy
      durationEstim = 4
      forceEndRoutine = False
      movie [set every repeat] = C:\Users\studi\Documents\NoThetaAVRepo\AudioVisualIntegration\TestPulse_2s_radius_comp.mkv
      size = [3840, 2160]
      startVal [frame N] = 0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    Routine trial
  LoopTerminator trials
