PsychoPy2experiment version="2024.1.1"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Experiment info = {'participant': 's00', 'order': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 2
  Units = height
  Window size (pixels) = [1280, 1024]
  expName = SentenceInNoise
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine audioTrial
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    SoundComponent sound_1
      sound [set every repeat] = $audiofile
      startVal [time (s)] = 0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Detect trial start time
        myClock = core.Clock()
        now = myClock.getTime()
        pp_start_time = now
    PolygonComponent fixation
      fillColor = white
      lineWidth = 0.5
      opacity = 0.75
      shape = cross
      size = (0.05, 0.05)
      startVal [frame N] = 0
      stopVal [condition] = $sound_1.status==FINISHED
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    CodeComponent hideMouse_2
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
    ImageComponent screenAfterAudio
      image = images/grayScreen.png
      size = (0.5, 0.5)
      startVal [frame N] = $fixation.status==FINISHED  
      stopVal [time (s)] = 2 
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    ParallelOutComponent pp_start
      address = 0x3FE8
      register = EIO
      startData = 1
      startEstim = 0.08
      startVal [condition] = $pp_start_time + 0.08
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t0_start
      address = 0x3FE8
      register = EIO
      startData = trigger_start
      startVal [time (s)] = $firstSound_tmin
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t1_start
      address = 0x3FE8
      register = EIO
      startData = trigger_call
      startVal [time (s)] = $token_1_tmin
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t1_end
      address = 0x3FE8
      register = EIO
      startData = trigger_call_end
      startVal [time (s)] = $token_1_tmax
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t2_start
      address = 0x3FE8
      register = EIO
      startData = trigger_col
      startVal [time (s)] = $token_2_tmin
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t2_end
      address = 0x3FE8
      register = EIO
      startData = trigger_col_end
      startVal [time (s)] = $token_2_tmax
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t3_start
      address = 0x3FE8
      register = EIO
      startData = trigger_num
      startVal [time (s)] = $token_3_tmin
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_end
      address = 0x3FE8
      register = EIO
      startData = trigger_end
      startVal [time (s)] = $lastSound_tmax
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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  Routine trial
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    CodeComponent setOpacityAndHideMouse
      Code Type = Py
      Begin Routine:
        #set opacity of response buttons to 1 (fully visible)
        call1.opacity = 1
        call2.opacity = 1
        call3.opacity = 1
        call4.opacity = 1
        call5.opacity = 1
        call6.opacity = 1
        call7.opacity = 1
        call8.opacity = 1

        colour1.opacity = 1
        colour2.opacity = 1
        colour3.opacity = 1
        colour4.opacity = 1
        colour5.opacity = 1
        colour6.opacity = 1
        colour7.opacity = 1
        colour8.opacity = 1

        number1.opacity = 1
        number2.opacity = 1
        number3.opacity = 1
        number4.opacity = 1
        number5.opacity = 1
        number6.opacity = 1
        number7.opacity = 1
        number8.opacity = 1
      Each Frame:
        #show mouse cursor only at the response screen
        win.mouseVisible = False
        if call1.status == STARTED:
            win.mouseVisible = True
    CodeComponent switchToNextTrialAfterResponseTimeOver
      Code Type = Py
      Begin Routine:
        participantResponseTime = None
        trialClock = core.Clock()
      Each Frame:
        if participantResponseTime == None:
            participantResponseTime = trialClock.getTime()

        #switch to the next trial when audio ended and response time (10 seconds) is over
        if participantResponseTime and trialClock.getTime() - participantResponseTime > 10 and not blankScreenAfterResponse.status == STARTED:
            continueRoutine = False
    CodeComponent mapStimuliLabels
      Code Type = Py
      Begin Experiment:
        # Mappings for stimuli properties
        mapCallSign = {
          "call1": "Adl",
          "call2": "Eul",
          "call3": "Rat",
          "call4": "Tig",
          "call5": "Vel",
          "call6": "Aut",
          "call7": "Mes",
          "call8": "Gab",
          }

        mapColour = {
          "colour1": "gel",
          "colour2": "gru",
          "colour3": "rot",
          "colour4": "wei",
          "colour5": "bla",
          "colour6": "bra",
          "colour7": "pin",
          "colour8": "sch"
          }

        mapNumber = {
          "number1": "Ein",
          "number2": "Zwe",
          "number3": "Dre",
          "number4": "Vie",
          "number5": "Fun",
          "number6": "Sec",
          "number7": "Neu",
          "number8": "Nul"
          }
    CodeComponent printoutCorrectAnswersForDebugging
      Code Type = Py
      Begin Routine:
        print("%s, %s, %s" % (callSign,colour,number))
    ImageComponent blankScreen
      image = images/grayScreen.png
      size = [1920, 1080]
      startVal [condition] = $screenAfterAudio.status==FINISHED
      stopVal [duration (s)] = 1.0
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    ImageComponent call1
      image [set every repeat] = images/Adl.png
      pos = (-0.4, 0.4375)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call2
      image = images/Eul.png
      pos = (-0.4, .3125)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call3
      image = images/Rat.png
      pos = (-0.4, .1875)
      size = (0.10, 0.10)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call4
      image = images/Tig.png
      pos = (-0.4, 0.0625)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call5
      image = images/Vel.png
      pos = (-0.4, -0.0625)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call6
      image = images/Aut.png
      pos = (-0.4, -0.1875)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call7
      image = images/Mes.png
      pos = (-0.4, -.3125)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call8
      image [set every repeat] = images/Gab.png
      pos = (-0.4, -0.4375)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour1
      image = images/gel.png
      pos = (0.0, 0.4375)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour2
      image = images/gru.png
      pos = (0.0, .3125)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour3
      image = images/rot.png
      pos = (0.0, 0.1875)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour4
      image = images/wei.png
      pos = (0.0, 0.0625)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour5
      image = images/bla.png
      pos = (0.0, -0.0625)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour6
      image = images/bra.png
      pos = (0.0, -0.1875)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour7
      image = images/pin.png
      pos = (0.0, -.3125)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour8
      image = images/sch.png
      pos = (0.0, -0.4375)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number1
      image = images/Ein.png
      pos = (0.4, 0.4375)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number2
      image = images/Zwe.png
      pos = (0.4, .3125)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number3
      image = images/Dre.png
      pos = (0.4, 0.1875)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number4
      image = images/Vie.png
      pos = (0.4, 0.0625)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number5
      image = images/Fue.png
      pos = (0.4, -0.0625)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number6
      image = images/Sec.png
      pos = (0.4, -0.1875)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number7
      image = images/Neu.png
      pos = (0.4, -0.3125)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number8
      image = images/Zer.png
      pos = (0.4, -0.4375)
      size = (0.1, 0.1)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    MouseComponent mouseClickOnCall
      clickable = call1, call2, call3, call4, call5, call6, call7, call8
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $blankScreen.status ==FINISHED
      timeRelativeTo = routine
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    CodeComponent disableCallButtons
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnCall.status = FINISHED
                        if call1.name != mouseClickOnCall.clicked_name[-1]: call1.opacity = 0.2
                        if call2.name != mouseClickOnCall.clicked_name[-1]: call2.opacity = 0.2
                        if call3.name != mouseClickOnCall.clicked_name[-1]: call3.opacity = 0.2
                        if call4.name != mouseClickOnCall.clicked_name[-1]: call4.opacity = 0.2
                        if call5.name != mouseClickOnCall.clicked_name[-1]: call5.opacity = 0.2
                        if call6.name != mouseClickOnCall.clicked_name[-1]: call6.opacity = 0.2
                        if call7.name != mouseClickOnCall.clicked_name[-1]: call7.opacity = 0.2
                        if call8.name != mouseClickOnCall.clicked_name[-1]: call8.opacity = 0.2
                        continueRoutine = True
    MouseComponent mouseClickOnColour
      clickable = colour1, colour2, colour3, colour4, colour5, colour6, colour7, colour8
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $mouseClickOnCall.status == FINISHED
      timeRelativeTo = routine
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    CodeComponent disableColourButtons
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnColour.status = FINISHED
                        if colour1.name != mouseClickOnColour.clicked_name[-1]: colour1.opacity = 0.2
                        if colour2.name != mouseClickOnColour.clicked_name[-1]: colour2.opacity = 0.2
                        if colour3.name != mouseClickOnColour.clicked_name[-1]: colour3.opacity = 0.2
                        if colour4.name != mouseClickOnColour.clicked_name[-1]: colour4.opacity = 0.2
                        if colour5.name != mouseClickOnColour.clicked_name[-1]: colour5.opacity = 0.2
                        if colour6.name != mouseClickOnColour.clicked_name[-1]: colour6.opacity = 0.2
                        if colour7.name != mouseClickOnColour.clicked_name[-1]: colour7.opacity = 0.2
                        if colour8.name != mouseClickOnColour.clicked_name[-1]: colour8.opacity = 0.2
                        continueRoutine = True
    MouseComponent mouseClickOnNumber
      clickable = number1, number2, number3, number4, number5, number6, number7, number8
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $mouseClickOnColour.status ==FINISHED
      timeRelativeTo = routine
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    CodeComponent disableNumberButtons
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnNumber.status = FINISHED
                        if number1.name != mouseClickOnNumber.clicked_name[-1]: number1.opacity = 0.2
                        if number2.name != mouseClickOnNumber.clicked_name[-1]: number2.opacity = 0.2
                        if number3.name != mouseClickOnNumber.clicked_name[-1]: number3.opacity = 0.2
                        if number4.name != mouseClickOnNumber.clicked_name[-1]: number4.opacity = 0.2
                        if number5.name != mouseClickOnNumber.clicked_name[-1]: number5.opacity = 0.2
                        if number6.name != mouseClickOnNumber.clicked_name[-1]: number6.opacity = 0.2
                        if number7.name != mouseClickOnNumber.clicked_name[-1]: number7.opacity = 0.2
                        if number8.name != mouseClickOnNumber.clicked_name[-1]: number8.opacity = 0.2
                      #  continueRoutine = True
    CodeComponent evaluateResponses
      Code Type = Py
      End Routine:
        #evaluate correctness of response and write into a new column TRUE, FALSE, or NO_ANSW
        if len(mouseClickOnCall.clicked_name) > 0:
            currentLoop.addData('callSignCorrect', mapCallSign[mouseClickOnCall.clicked_name[0]] == callSign)
            print(mapCallSign[mouseClickOnCall.clicked_name[0]])
        else:
            currentLoop.addData('callSignCorrect', "NO_ANSW")
        if len(mouseClickOnColour.clicked_name) > 0:
            currentLoop.addData('colourCorrect', mapColour[mouseClickOnColour.clicked_name[0]] == colour)
            print(mapColour[mouseClickOnColour.clicked_name[0]])
        else:
            currentLoop.addData('colourCorrect', "NO_ANSW")
        if len(mouseClickOnNumber.clicked_name) > 0:
            currentLoop.addData('numberCorrect', mapNumber[mouseClickOnNumber.clicked_name[0]] == number)
            print(mapNumber[mouseClickOnNumber.clicked_name[0]])
        else:
            currentLoop.addData('numberCorrect', "NO_ANSW")
    CodeComponent saveAfterEachTrial
      Code Type = Py
      End Routine:
        #sicherIstSicher
        #thisExp.saveAsWideText(filename+'.csv')
        #logging.flush()
    ImageComponent blankScreenAfterResponse
      image = images/blankScreen.png
      size = [1920, 1080]
      startVal [condition] = $mouseClickOnNumber.status==FINISHED
      stopVal [duration (s)] = 0.6
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    ParallelOutComponent pp_respGrid
      address = 0x3FE8
      register = EIO
      startData = 7
      startVal [condition] = $blankScreen.status==FINISHED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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  Routine startBlock
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    TextComponent blockStart
      letterHeight = 0.04
      startVal [time (s)] = 0
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      text:
        Anfang des nächsten Blocks

        <Klicken Sie auf die Abstandstaste/spacebar um fortzufahren >
    ParallelOutComponent pp_blockstart
      address = 0x3FE8
      register = EIO
      startData = 6
      startVal [condition] = $blockStart.status==STARTED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent getOrder_2
      Code Type = Auto->JS
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      Begin Experiment:
        orderFile = "order" + expInfo['order']+ ".csv"
        print(orderFile)
  Routine instrRest_PRE
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    CodeComponent prep_instrRest_pre
      Code Type = Auto->JS
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      Before Experiment:
        #import psychopy
        from psychopy import sound
        import psychopy.visual
        import psychopy.event
        import psychopy.core

        clock = psychopy.core.Clock()
      Begin Experiment:
        #if (SubjectNumber % 2 == 0):
        #    Order=ABCD
        #else:
        #    Order=CDBA
    TextComponent instrRest_pre
      letterHeight = 0.04
      startVal [frame N] = 0
      wrapWidth = 1
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      text:
        Sind Sie bereit?

        -------------------------------------------------------------------------------

        Zu Beginn, bleiben Sie bitte während 5 Minuten so still wie möglich sitzen schauen Sie das Kreuz in der Mitte des Bildschirms an.

        Ein ‘beep’ kennzeichnet den Start und das Ende der Aufnahme.

        Bitte versuchen Sie, während dieser Aufnahme bis zum Ende so still wie möglich zu sitzen und den Blick auf das Kreuz zu fixieren.


        <Klicken Sie auf die Abstandstaste/spacebar um fortzufahren >
    KeyboardComponent key_resp_instRest_pre
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse_3
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
    ParallelOutComponent pp_instrRest_PRE
      address = 0x3FE8
      register = EIO
      startData = 55
      startVal [condition] = $instrRest_pre.status==FINISHED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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  Routine instrRest_POST
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    TextComponent instrRest_post
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        Sehr gut!
        ------------------------------------------------------------------------------

        Um die Aufnahme zu beenden, bitten wir Sie, nochmals 5 Minuten so still wie möglich zu sitzen und die Augen geschlossen zu halten.

        Ein ‘beep’ wird den Anfang und das Ende der Aufnahme angeben. Bitte sitzen Sie so still wie möglich und halten Sie die Augen geschlossen bis der zweite Ton erklingt.


        <Klicken Sie auf die Abstandstaste/spacebar um fortzufahren >
    ParallelOutComponent pp_rest_post
      address = 0x3FE8
      register = EIO
      startData = 55
      startVal [condition] = $instrRest_post.status == STARTED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    KeyboardComponent key_resp_instRest_post
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse_4
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine instrStart
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    TextComponent instr_start
      letterHeight = 0.03
      startVal [frame N] = 0
      wrapWidth = 1
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      text:
        WILKOMMEN!
        -------------------------------------------------------------------------------
        Dieses Experiment besteht aus 3 Teilen:

        1. Eine kurze Sequenz in Ruhe mit geschlossenen Augen.

        3. Der Hauptteil besteht aus 6 Blöcken mit Pausen dazwischen.

        3. Nochmals eine kurze Sequenz in Ruhe mit geschlossenen Augen.



        <Klicken Sie auf die Abstandstaste/spacebar um fortzufahren >
    KeyboardComponent key_resp_inst_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse_5
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine thanks_end
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    TextComponent thanksText_end
      letterHeight = 0.04
      startVal [condition] = $beep_rest_post_end.status == FINISHED
      stopVal [duration (s)] = 20
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      text:
        Sehr gut!   :  )

        VIELEN DANK für Ihre Kollaboration und Zeit.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse_11
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine instrTask
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    TextComponent instrTaskText
      letterHeight = 0.04
      startVal [frame N] = 0.0
      wrapWidth = 1
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      text:
        Sind Sie bereit, mit der Aufgabe zu beginnen? Sollten Sie noch Fragen haben, wenden Sie sich bitte an die Versuchsleitenden.

        Versuchen Sie, sich während der gesamten Aufgabe so wenig wie möglich zu bewegen.

        <Klicken Sie auf die Abstandstaste/spacebar um fortzufahren >
    ParallelOutComponent pp_instrTask
      address = 0x3FE8
      register = EIO
      startData = 5
      startVal [condition] = $instrTaskText.status==FINISHED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    KeyboardComponent key_resp_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
    CodeComponent getOrder
      Code Type = Auto->JS
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      Begin Experiment:
        orderFile = "order" + expInfo['order']+ ".csv"
        print('^^^^^----^-^')
        print(orderFile)
  Routine trial_eg
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    CodeComponent setOpacityAndHideMouse_2
      Code Type = Py
      Begin Routine:
        #set opacity of response buttons to 1 (fully visible)
        call1_2.opacity = 1
        call2_2.opacity = 1
        call3_2.opacity = 1
        call4_2.opacity = 1

        colour1_2.opacity = 1
        colour2_2.opacity = 1
        colour3_2.opacity = 1
        colour4_2.opacity = 1

        number1_2.opacity = 1
        number2_2.opacity = 1
        number3_2.opacity = 1
        number4_2.opacity = 1
      Each Frame:
        #show mouse cursor only at the response screen
        win.mouseVisible = False
        if call1_2.status == STARTED:
            win.mouseVisible = True
    CodeComponent switchToNextTrialAfterResponseTimeOver_2
      Code Type = Py
      Begin Routine:
        participantResponseTime = None
        trialClock = core.Clock()
      Each Frame:
        if participantResponseTime == None:
            participantResponseTime = trialClock.getTime()

        #switch to the next trial when audio ended and response time (10 seconds) is over
        if participantResponseTime and trialClock.getTime() - participantResponseTime > 10 and not blankScreenAfterResponse_2.status == STARTED:
            continueRoutine = False
    CodeComponent mapStimuliLabels_2
      Code Type = Py
      Begin Experiment:
        # Mappings for stimuli properties
        mapCallSign_2 = {
          "call1_2": "Ad",
          "call2_2": "Dr",
          "call3_2": "Kr",
          "call4_2": "Ti"
          }

        mapColour_2 = {
          "colour1_2": "ge",
          "colour2_2": "gr",
          "colour3_2": "ro",
          "colour4_2": "we"
          }

        mapNumber_2 = {
          "number1_2": "Ei",
          "number2_2": "Zw",
          "number3_2": "Dr",
          "number4_2": "Vi"
          }
    CodeComponent printoutCorrectAnswersForDebugging_2
      Code Type = Py
      Begin Routine:
        print("%s, %s, %s" % (callSign,colour,number))
    ImageComponent blankScreen_2
      image = images/grayScreen.png
      size = [1920, 1080]
      startVal [condition] = $screenAfterAudio_2.status==FINISHED
      stopVal [duration (s)] = 1.0
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    ImageComponent call1_2
      image = images/adler.png
      pos = (-0.4, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent call2_2
      image = images/drossel.png
      pos = (-0.4, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent call3_2
      image = images/kroete.png
      pos = (-0.4, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent call4_2
      image = images/tiger.png
      pos = (-0.4, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent colour1_2
      image = images/gelb.png
      pos = (0.0, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent colour2_2
      image = images/gruen.png
      pos = (0.0, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent colour3_2
      image = images/rot.png
      pos = (0.0, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent colour4_2
      image = images/weiss.png
      pos = (0.0, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent number1_2
      image = images/1.png
      pos = (0.4, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent number2_2
      image = images/2.png
      pos = (0.4, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent number3_2
      image = images/3.png
      pos = (0.4, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent number4_2
      image = images/4.png
      pos = (0.4, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    MouseComponent mouseClickOnCall_2
      clickable = call1_2, call2_2, call3_2, call4_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $blankScreen_2.status ==FINISHED
      timeRelativeTo = routine
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    CodeComponent disableCallButtons_2
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnCall_2.status = FINISHED
                        if call1_2.name != mouseClickOnCall_2.clicked_name[-1]: call1_2.opacity = 0.2
                        if call2_2.name != mouseClickOnCall_2.clicked_name[-1]: call2_2.opacity = 0.2
                        if call3_2.name != mouseClickOnCall_2.clicked_name[-1]: call3_2.opacity = 0.2
                        if call4_2.name != mouseClickOnCall_2.clicked_name[-1]: call4_2.opacity = 0.2
                        continueRoutine = True
    MouseComponent mouseClickOnColour_2
      clickable = colour1_2, colour2_2, colour3_2, colour4_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $mouseClickOnCall_2.getPressed()[0]
      timeRelativeTo = routine
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    CodeComponent disableColourButtons_2
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnColour_2.status = FINISHED
                        if colour1_2.name != mouseClickOnColour_2.clicked_name[-1]: colour1_2.opacity = 0.2
                        if colour2_2.name != mouseClickOnColour_2.clicked_name[-1]: colour2_2.opacity = 0.2
                        if colour3_2.name != mouseClickOnColour_2.clicked_name[-1]: colour3_2.opacity = 0.2
                        if colour4_2.name != mouseClickOnColour_2.clicked_name[-1]: colour4_2.opacity = 0.2
                        continueRoutine = True
    MouseComponent mouseClickOnNumber_2
      clickable = number1_2, number2_2, number3_2, number4_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $mouseClickOnColour_2.status ==FINISHED
      timeRelativeTo = routine
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    CodeComponent disableNumberButtons_2
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnNumber_2.status = FINISHED
                        if number1_2.name != mouseClickOnNumber_2.clicked_name[-1]: number1_2.opacity = 0.2
                        if number2_2.name != mouseClickOnNumber_2.clicked_name[-1]: number2_2.opacity = 0.2
                        if number3_2.name != mouseClickOnNumber_2.clicked_name[-1]: number3_2.opacity = 0.2
                        if number4_2.name != mouseClickOnNumber_2.clicked_name[-1]: number4_2.opacity = 0.2
                      #  continueRoutine = True
    CodeComponent evaluateResponses_2
      Code Type = Py
      End Routine:
        #evaluate correctness of response and write into a new column TRUE, FALSE, or NO_ANSW
        if len(mouseClickOnCall_2.clicked_name) > 0:
            currentLoop.addData('callSignCorrect', mapCallSign_2[mouseClickOnCall_2.clicked_name[0]] == callSign)
            print(mapCallSign_2[mouseClickOnCall_2.clicked_name[0]])
        else:
            currentLoop.addData('callSignCorrect', "NO_ANSW")
        if len(mouseClickOnColour_2.clicked_name) > 0:
            currentLoop.addData('colourCorrect', mapColour_2[mouseClickOnColour_2.clicked_name[0]] == colour)
            print(mapColour_2[mouseClickOnColour_2.clicked_name[0]])
        else:
            currentLoop.addData('colourCorrect', "NO_ANSW")
        if len(mouseClickOnNumber_2.clicked_name) > 0:
            currentLoop.addData('numberCorrect', mapNumber_2[mouseClickOnNumber_2.clicked_name[0]] == number)
            print(mapNumber_2[mouseClickOnNumber_2.clicked_name[0]])
        else:
            currentLoop.addData('numberCorrect', "NO_ANSW")
    CodeComponent saveAfterEachTrial_2
      Code Type = Py
      End Routine:
        #sicherIstSicher
        #thisExp.saveAsWideText(filename+'.csv')
        #logging.flush()
    ImageComponent blankScreenAfterResponse_2
      image = images/grayScreen.png
      size = [1920, 1080]
      startVal [condition] = $mouseClickOnNumber.status==FINISHED
      stopVal [duration (s)] = 0.3
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  Routine audioTrial_eg
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    SoundComponent sound_examples
      sound [set every repeat] = $audiofile
      startVal [frame N] = $instr_start_2.status == FINISHED
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    PolygonComponent fixation_2
      fillColor = white
      lineWidth = 0.5
      opacity = 0.75
      shape = cross
      size = (0.05, 0.05)
      startVal [frame N] = 0
      stopVal [condition] = $sound_examples.status==FINISHED
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    CodeComponent hideMouse_6
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
    ImageComponent screenAfterAudio_2
      image = images/grayScreen.png
      size = (0.5, 0.5)
      startVal [frame N] = $fixation_2.status==FINISHED  
      stopVal [time (s)] = 1
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  Routine restTrial_pre
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    SoundComponent beep_rest_pre_start
      saveStartStop = False
      sound [set every repeat] = click_beep.wav
      startVal [condition] = $instrRest_pre.status==FINISHED
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    PolygonComponent fixation_1
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 0.5
      opacity = 0.75
      shape = cross
      size = (0.05, 0.05)
      startVal [frame N] = 0
      stopVal [duration (s)] = 300
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    CodeComponent hideMouse_8
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
    ImageComponent screenAfterAudio_3
      image = images/grayScreen.png
      size = (0.5, 0.5)
      startVal [frame N] = $fixation_1.status==FINISHED  
      stopVal [time (s)] = 2 
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    SoundComponent beep_rest_pre_end
      sound [set every repeat] = click_beep.wav
      startVal [condition] = $fixation_1.status == FINISHED
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    ParallelOutComponent pp_rest_pre_start
      address = 0x3FE8
      register = EIO
      startData = 8
      startVal [condition] = $beep_rest_pre_start.status==STARTED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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  Routine restTrial_post
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    SoundComponent beep_rest_post_start
      saveStartStop = False
      sound [set every repeat] = click_beep.wav
      startVal [condition] = $instrRest_post.status == FINISHED
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    PolygonComponent fixation_3
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 0.5
      opacity = 0.75
      shape = cross
      size = (0.05, 0.05)
      startVal [frame N] = 0
      stopVal [duration (s)] = 300
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    CodeComponent hideMouse_9
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
    ImageComponent screenAfterAudio_4
      image = images/grayScreen.png
      size = (0.5, 0.5)
      startVal [frame N] = $fixation_3.status==FINISHED  
      stopVal [time (s)] = 2
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    SoundComponent beep_rest_post_end
      sound [set every repeat] = click_beep.wav
      startVal [condition] = $fixation_3.status == FINISHED
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    ParallelOutComponent pp_rest_pre_start_2
      address = 0x3FE8
      register = EIO
      startData = 9
      startVal [condition] = $beep_rest_post_start.status==STARTED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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  Routine endBlock
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    TextComponent blockEnds
      letterHeight = 0.04
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = Blockende
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    CodeComponent hideMouse_10
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
    ParallelOutComponent pp_blockends
      address = 0x3FE8
      register = EIO
      startData = 60
      startVal [condition] = $blockEnds.status==FINISHED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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  Routine instrMain_1
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    TextComponent instr_start_1
      letterHeight = 0.03
      startVal [condition] = $beep_rest_pre_end.status == FINISHED
      wrapWidth = 1
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      text:
        Sehr gut! Nun fahren wir mit dem Hauptteil fort.
        -------------------------------------------------------------------------------

        Folgend werden Sie verschiedene strukturierte Sätze mit jeweils drei wechselnden Wörtern hören:

        Vorsicht *__*, geh sofort zum *__* Feld von der Spalte *__*.


        Für jedes der freien Felder gibt es acht mögliche Worte, zum Beispiel:

        Vorsicht *Adler/Eule/Ratte/Tiger/Velo/Auto/Messer/Gabel*, geh sofort zum *gelben/grünen/roten/weissen/blauen/braunen/pinken/schwarezn* Feld von der Spalte *eins/zwei/drei/vier/fünf/sechs/neun/null*.



        <Klicken Sie auf die Abstandstaste/spacebar um fortzufahren >
    KeyboardComponent key_resp_inst_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse_12
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine instrMain_2
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    ParallelOutComponent pp_instr_start_2
      address = 0x3FE8
      register = EIO
      startData = 55
      startVal [condition] = $instr_start_1.status==FINISHED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    TextComponent instr_start_2
      letterHeight = 0.03
      startVal [condition] = $instr_start_1.status == FINISHED
      wrapWidth = 1
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      text:
        Hören Sie bitte gut zu.

        Ihre Aufgabe ist es, nach jedem Satz die zu den drei Wörtern passenden Bilder der Reihenfolge nach mit der Maus auf dem Bildschirm anzuklicken.

        Einige der Sätze werden relativ einfach sein, andere etwas anspruchsvoller, und gewisse scheinen gänzlich unverständlich.

        Versuchen Sie bitte, unabhängig von der Bedingung so gut wie möglich hinzuhören und eine Antwort zu geben. Wenn Sie es nicht verstanden haben, dürfen Sie raten.


        <Klicken Sie auf die Abstandstaste/spacebar um zu beginnen>
    KeyboardComponent key_resp_inst_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse_7
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
Flow
  Routine instrStart
  Routine instrRest_PRE
  Routine restTrial_pre
  Routine instrMain_1
  Routine instrMain_2
  Routine instrTask
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $orderFile
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine startBlock
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine audioTrial
      Routine trial
    LoopTerminator trials
    Routine endBlock
  LoopTerminator blocks
  Routine instrRest_POST
  Routine restTrial_post
  Routine thanks_end
