PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test_trigger
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent audiotrial
      image = images/grayScreen.png
      size = (0.5, 0.5)
      startVal [frame N] = 1
      stopVal [time (s)] = 2 
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    PolygonComponent fixation
      fillColor = white
      lineWidth = 0.5
      opacity = 0.75
      shape = cross
      size = (0.05, 0.05)
      startVal [frame N] = 0
      stopVal [condition] = $sound_1.status==FINISHED
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    SoundComponent sound_1
      sound [set every repeat] = audiotest/NV_DE_Neural2-D_Ad-ge-Dr_0.4p.wav
      startVal [frame N] = 1
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    ParallelOutComponent lp_port
      address = 0x0378
      register = EIO
      startData = 1
      startVal [condition] = $sound_1.status==STARTED
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        use_lpt = True

        if use_lpt:
            port = parallel.ParallelPort(address=0xDFF8) # open the parallel port for EEG markers
            port.setData(0) # 0 as marker for begin exp
      Each Frame:
        if use_lpt:
            if sound_1.status == STARTED:
                port.setData(10)
                print(10)
Flow
  Routine trial
