PsychoPy2experiment version="2022.2.1"
Settings
  Audio lib = pyo
  Experiment info = {'participant': 's00', 'order': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = SentenceInNoise
  keyboardBackend = ioHub
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Routines
  Routine audioTrial
    SoundComponent sound_1
      sound [set every repeat] = $audiofile
      startVal [frame N] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Trigger
        myClock = core.Clock()
        now = myClock.getTime()

        # Trigger times
        pp_start_time = now # + ptb.GetSecs()

        # Some runner prints for testing
        print('<<<< now')
        print(now)

         #
    PolygonComponent fixation
      fillColor = white
      lineWidth = 0.5
      opacity = 0.75
      shape = cross
      size = (0.05, 0.05)
      startVal [frame N] = 0
      stopVal [condition] = $sound_1.status==FINISHED
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    CodeComponent hideMouse_2
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
    ImageComponent screenAfterAudio
      image = images/grayScreen.png
      size = (0.5, 0.5)
      startVal [frame N] = $fixation.status==FINISHED  
      stopVal [time (s)] = 2 
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    ParallelOutComponent pp_start
      address = 0x3FE8
      register = EIO
      startData = 1
      startVal [condition] = $pp_start_time + 0.08
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t0_start
      address = 0x3FE8
      register = EIO
      startData = 101
      startVal [time (s)] = $firstSound_tmin
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t1_start
      address = 0x3FE8
      register = EIO
      startData = trigger_call
      startVal [time (s)] = $token_1_tmin
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t2_start
      address = 0x3FE8
      register = EIO
      startData = trigger_col
      startVal [time (s)] = $token_2_tmin
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t3_start
      address = 0x3FE8
      register = EIO
      startData = trigger_num
      startVal [time (s)] = $token_3_tmin
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_end
      address = 0x3FE8
      register = EIO
      startData = trigger_end
      startVal [time (s)] = $lastSound_tmax
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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  Routine trial
    CodeComponent setOpacityAndHideMouse
      Code Type = Py
      Begin Routine:
        #set opacity of response buttons to 1 (fully visible)
        call1.opacity = 1
        call2.opacity = 1
        call3.opacity = 1
        call4.opacity = 1

        colour1.opacity = 1
        colour2.opacity = 1
        colour3.opacity = 1
        colour4.opacity = 1

        number1.opacity = 1
        number2.opacity = 1
        number3.opacity = 1
        number4.opacity = 1
      Each Frame:
        #show mouse cursor only at the response screen
        win.mouseVisible = False
        if call1.status == STARTED:
            win.mouseVisible = True
    CodeComponent switchToNextTrialAfterResponseTimeOver
      Code Type = Py
      Begin Routine:
        participantResponseTime = None
        trialClock = core.Clock()
      Each Frame:
        if participantResponseTime == None:
            participantResponseTime = trialClock.getTime()

        #switch to the next trial when audio ended and response time (10 seconds) is over
        if participantResponseTime and trialClock.getTime() - participantResponseTime > 10 and not blankScreenAfterResponse.status == STARTED:
            continueRoutine = False
    CodeComponent mapStimuliLabels
      Code Type = Py
      Begin Experiment:
        # Mappings for stimuli properties
        mapCallSign = {
          "call1": "Ad",
          "call2": "Dr",
          "call3": "Kr",
          "call4": "Ti"
          }

        mapColour = {
          "colour1": "Ge",
          "colour2": "Gr",
          "colour3": "Ro",
          "colour4": "We"
          }

        mapNumber = {
          "number1": 1,
          "number2": 2,
          "number3": 3,
          "number4": 4
          }
    CodeComponent printoutCorrectAnswersForDebugging
      Code Type = Py
      Begin Routine:
        print("%s, %s, %s" % (callSign,colour,number))
    ImageComponent blankScreen
      image = images/grayScreen.png
      size = [1920, 1080]
      startVal [condition] = $screenAfterAudio.status==FINISHED
      stopVal [duration (s)] = 1.0
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    ImageComponent call1
      image = images/adler.png
      pos = (-0.4, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call2
      image = images/drossel.png
      pos = (-0.4, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call3
      image = images/kroete.png
      pos = (-0.4, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call4
      image = images/tiger.png
      pos = (-0.4, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour1
      image = images/gelb.png
      pos = (0.0, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour2
      image = images/gruen.png
      pos = (0.0, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour3
      image = images/rot.png
      pos = (0.0, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour4
      image = images/weiss.png
      pos = (0.0, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number1
      image = images/1.png
      pos = (0.4, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number2
      image = images/2.png
      pos = (0.4, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number3
      image = images/3.png
      pos = (0.4, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number4
      image = images/4.png
      pos = (0.4, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    MouseComponent mouseClickOnCall
      clickable = call1, call2, call3, call4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $blankScreen.status ==FINISHED
      timeRelativeTo = routine
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    CodeComponent disableCallButtons
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnCall.status = FINISHED
                        if call1.name != mouseClickOnCall.clicked_name[-1]: call1.opacity = 0.2
                        if call2.name != mouseClickOnCall.clicked_name[-1]: call2.opacity = 0.2
                        if call3.name != mouseClickOnCall.clicked_name[-1]: call3.opacity = 0.2
                        if call4.name != mouseClickOnCall.clicked_name[-1]: call4.opacity = 0.2
                        continueRoutine = True
    MouseComponent mouseClickOnColour
      clickable = colour1, colour2, colour3, colour4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $mouseClickOnCall.getPressed()[0]
      timeRelativeTo = routine
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    CodeComponent disableColourButtons
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnColour.status = FINISHED
                        if colour1.name != mouseClickOnColour.clicked_name[-1]: colour1.opacity = 0.2
                        if colour2.name != mouseClickOnColour.clicked_name[-1]: colour2.opacity = 0.2
                        if colour3.name != mouseClickOnColour.clicked_name[-1]: colour3.opacity = 0.2
                        if colour4.name != mouseClickOnColour.clicked_name[-1]: colour4.opacity = 0.2
                        continueRoutine = True
    MouseComponent mouseClickOnNumber
      clickable = number1, number2, number3, number4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $mouseClickOnColour.status ==FINISHED
      timeRelativeTo = routine
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    CodeComponent disableNumberButtons
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnNumber.status = FINISHED
                        if number1.name != mouseClickOnNumber.clicked_name[-1]: number1.opacity = 0.2
                        if number2.name != mouseClickOnNumber.clicked_name[-1]: number2.opacity = 0.2
                        if number3.name != mouseClickOnNumber.clicked_name[-1]: number3.opacity = 0.2
                        if number4.name != mouseClickOnNumber.clicked_name[-1]: number4.opacity = 0.2
                      #  continueRoutine = True
    CodeComponent evaluateResponses
      Code Type = Py
      End Routine:
        #evaluate correctness of response and write into a new column TRUE, FALSE, or NO_ANSW
        if len(mouseClickOnCall.clicked_name) > 0:
            currentLoop.addData('callSignCorrect', mapCallSign[mouseClickOnCall.clicked_name[0]] == callSign)
            print(mapCallSign[mouseClickOnCall.clicked_name[0]])
        else:
            currentLoop.addData('callSignCorrect', "NO_ANSW")
        if len(mouseClickOnColour.clicked_name) > 0:
            currentLoop.addData('colourCorrect', mapColour[mouseClickOnColour.clicked_name[0]] == colour)
            print(mapColour[mouseClickOnColour.clicked_name[0]])
        else:
            currentLoop.addData('colourCorrect', "NO_ANSW")
        if len(mouseClickOnNumber.clicked_name) > 0:
            currentLoop.addData('numberCorrect', mapNumber[mouseClickOnNumber.clicked_name[0]] == number)
            print(mapNumber[mouseClickOnNumber.clicked_name[0]])
        else:
            currentLoop.addData('numberCorrect', "NO_ANSW")
    CodeComponent saveAfterEachTrial
      Code Type = Py
      End Routine:
        #sicherIstSicher
        #thisExp.saveAsWideText(filename+'.csv')
        #logging.flush()
    ImageComponent blankScreenAfterResponse
      image = images/blankScreen.png
      size = [1920, 1080]
      startVal [condition] = $mouseClickOnNumber.status==FINISHED
      stopVal [duration (s)] = 0.6
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  Routine startBlock
    TextComponent blockStart
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Anfang des nächsten Blocks

        <Klicken Sie auf die Abstandstaste/spacebar um fortzufahren >
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine restBlock_pre
    TextComponent restBlock_1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Begin  block 
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    KeyboardComponent key_resp_rest_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine restBlock_post
    TextComponent restBlock_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Begin  block 
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    KeyboardComponent key_resp_rest_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instrRest_PRE
    CodeComponent prep_instrRest_pre
      Code Type = Auto->JS
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      Before Experiment:
        #import psychtoolbox as ptb
        from psychopy import sound
        import psychopy.visual
        import psychopy.event
        import psychopy.core

        clock = psychopy.core.Clock()
        print('TIME O_o')
        print(clock.getTime())
      Begin Experiment:
        #if (SubjectNumber % 2 == 0):
        #    Order=ABCD
        #else:
        #    Order=CDBA
    TextComponent instrRest_pre
      letterHeight = 0.04
      startVal [frame N] = 0
      wrapWidth = 1
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      text:
        Sind Sie bereit?

        Zu Beginn, bleiben Sie bitte während einer Minute so still wie möglich sitzen und schliessen Sie die Augen.

        Ein ‘beep’ kennzeichnet den Start und das Ende der Aufnahme. Bitte versuchen Sie, während dieser Aufnahme bis zum Ende so still wie möglich zu sitzen und die Augen geschlossen zu halten.


        <Klicken Sie auf die Abstandstaste/spacebar um fortzufahren >
    KeyboardComponent key_resp_instRest_pre
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse_3
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine instrRest_POST
    CodeComponent prep_instrRest_post
      Code Type = Auto->JS
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      Before Experiment:
        #import psychtoolbox as ptb
        from psychopy import sound
        import psychopy.visual
        import psychopy.event
        import psychopy.core

        clock = psychopy.core.Clock()
        print('TIME O_o')
        print(clock.getTime())
      Begin Experiment:
        #if (SubjectNumber % 2 == 0):
        #    Order=ABCD
        #else:
        #    Order=CDBA
    TextComponent instrRest_post
      letterHeight = 0.04
      startVal [frame N] = 0
      wrapWidth = 1
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      text:
        Sehr gut!

        Um die Aufnahme zu beenden, bitten wir Sie, nochmals eine Minute so still wie möglich zu sitzen und die Augen geschlossen zu halten.

        Ein ‘beep’ wird den Anfang und das Ende der Aufnahme angeben. Bitte sitzen Sie so still wie möglich und halten Sie die Augen geschlossen bis der zweite Ton erklingt.


        <Klicken Sie auf die Abstandstaste/spacebar um fortzufahren >
    KeyboardComponent key_resp_instRest_post
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse_4
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine instrStart
    CodeComponent preparations_2
      Code Type = Auto->JS
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      Before Experiment:
        #import psychtoolbox as ptb
        #from psychopy import sound
        #import psychopy.visual
        #import psychopy.event
        #import psychopy.core
      Begin Experiment:
        #if (SubjectNumber % 2 == 0):
        #    Order=ABCD
        #else:
        #    Order=CDBA
    TextComponent instr_start
      letterHeight = 0.04
      startVal [frame N] = 0
      wrapWidth = 1
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      text:
        Willkomen!

        Dieses Experiment besteht aus 3 Teilen:

        - Eine kurze Sequenz in Ruhe mit geschlossenen Augen
        - Der Hauptteil besteht aus 4 Blöcken. Zwischen den Blöcken können Sie jeweils eine kurze Pause machen.
        -Nochmals eine kurze Sequenz in Ruhe mit geschlossenen Augen

        <Klicken Sie auf die Abstandstaste/spacebar um fortzufahren >
    KeyboardComponent key_resp_inst_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse_5
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine thanks_end
    TextComponent thanksText_end
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Sehr gut!  😊

        VIELEN DANK für Ihre Kollaboration und Zeit.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instrTask
    CodeComponent preparations
      Code Type = Auto->JS
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      Before Experiment:
        #import psychtoolbox as ptb
        from psychopy import sound
        import psychopy.visual
        import psychopy.event
        import psychopy.core

        clock = psychopy.core.Clock()
        print('TIME O_o')
        print(clock.getTime())
      Begin Experiment:
        #if (SubjectNumber % 2 == 0):
        #    Order=ABCD
        #else:
        #    Order=CDBA
    TextComponent instrTaskText
      letterHeight = 0.04
      startVal [frame N] = 0
      wrapWidth = 1
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      text:
        Sehr gut!

        Sind Sie bereit, mit der Aufgabe zu beginnen? Sollten Sie noch Fragen haben, wenden Sie sich bitte an den Versuchsleiter.

        Versuchen Sie sich während der gesamten Aufgabe so wenig wie möglich zu bewegen.

        <Klicken Sie auf die Abstandstaste/spacebar um fortzufahren >
    KeyboardComponent key_resp_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
    CodeComponent getOrder
      Code Type = Auto->JS
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      Begin Experiment:
        orderFile = "order" + expInfo['order']+ ".csv"
        prefs.hardware['audioLib'] = 'pyo'
  Routine trial_eg
    CodeComponent setOpacityAndHideMouse_2
      Code Type = Py
      Begin Routine:
        #set opacity of response buttons to 1 (fully visible)
        call1.opacity = 1
        call2.opacity = 1
        call3.opacity = 1
        call4.opacity = 1

        colour1.opacity = 1
        colour2.opacity = 1
        colour3.opacity = 1
        colour4.opacity = 1

        number1.opacity = 1
        number2.opacity = 1
        number3.opacity = 1
        number4.opacity = 1
      Each Frame:
        #show mouse cursor only at the response screen
        win.mouseVisible = False
        if call1.status == STARTED:
            win.mouseVisible = True
    CodeComponent switchToNextTrialAfterResponseTimeOver_2
      Code Type = Py
      Begin Routine:
        participantResponseTime = None
        trialClock = core.Clock()
      Each Frame:
        if participantResponseTime == None:
            participantResponseTime = trialClock.getTime()

        #switch to the next trial when audio ended and response time (10 seconds) is over
        if participantResponseTime and trialClock.getTime() - participantResponseTime > 10 and not blankScreenAfterResponse.status == STARTED:
            continueRoutine = False
    CodeComponent mapStimuliLabels_2
      Code Type = Py
      Begin Experiment:
        # Mappings for stimuli properties
        mapCallSign = {
          "call1": "Ad",
          "call2": "Dr",
          "call3": "Kr",
          "call4": "Ti"
          }

        mapColour = {
          "colour1": "Ge",
          "colour2": "Gr",
          "colour3": "Ro",
          "colour4": "We"
          }

        mapNumber = {
          "number1": 1,
          "number2": 2,
          "number3": 3,
          "number4": 4
          }
    CodeComponent printoutCorrectAnswersForDebugging_2
      Code Type = Py
      Begin Routine:
        print("%s, %s, %s" % (callSign,colour,number))
    ImageComponent blankScreen_2
      image = images/grayScreen.png
      size = [1920, 1080]
      startVal [condition] = $screenAfterAudio.status==FINISHED
      stopVal [duration (s)] = 1.0
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    ImageComponent call1_2
      image = images/adler.png
      pos = (-0.4, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call2_2
      image = images/drossel.png
      pos = (-0.4, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call3_2
      image = images/kroete.png
      pos = (-0.4, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call4_2
      image = images/tiger.png
      pos = (-0.4, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour1_2
      image = images/gelb.png
      pos = (0.0, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour2_2
      image = images/gruen.png
      pos = (0.0, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour3_2
      image = images/rot.png
      pos = (0.0, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour4_2
      image = images/weiss.png
      pos = (0.0, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number1_2
      image = images/1.png
      pos = (0.4, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number2_2
      image = images/2.png
      pos = (0.4, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number3_2
      image = images/3.png
      pos = (0.4, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number4_2
      image = images/4.png
      pos = (0.4, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    MouseComponent mouseClickOnCall_2
      clickable = call1, call2, call3, call4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $blankScreen.status ==FINISHED
      timeRelativeTo = routine
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    CodeComponent disableCallButtons_2
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnCall.status = FINISHED
                        if call1.name != mouseClickOnCall.clicked_name[-1]: call1.opacity = 0.2
                        if call2.name != mouseClickOnCall.clicked_name[-1]: call2.opacity = 0.2
                        if call3.name != mouseClickOnCall.clicked_name[-1]: call3.opacity = 0.2
                        if call4.name != mouseClickOnCall.clicked_name[-1]: call4.opacity = 0.2
                        continueRoutine = True
    MouseComponent mouseClickOnColour_2
      clickable = colour1, colour2, colour3, colour4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $mouseClickOnCall.getPressed()[0]
      timeRelativeTo = routine
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    CodeComponent disableColourButtons_2
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnColour.status = FINISHED
                        if colour1.name != mouseClickOnColour.clicked_name[-1]: colour1.opacity = 0.2
                        if colour2.name != mouseClickOnColour.clicked_name[-1]: colour2.opacity = 0.2
                        if colour3.name != mouseClickOnColour.clicked_name[-1]: colour3.opacity = 0.2
                        if colour4.name != mouseClickOnColour.clicked_name[-1]: colour4.opacity = 0.2
                        continueRoutine = True
    MouseComponent mouseClickOnNumber_2
      clickable = number1, number2, number3, number4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $mouseClickOnColour.status ==FINISHED
      timeRelativeTo = routine
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    CodeComponent disableNumberButtons_2
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnNumber.status = FINISHED
                        if number1.name != mouseClickOnNumber.clicked_name[-1]: number1.opacity = 0.2
                        if number2.name != mouseClickOnNumber.clicked_name[-1]: number2.opacity = 0.2
                        if number3.name != mouseClickOnNumber.clicked_name[-1]: number3.opacity = 0.2
                        if number4.name != mouseClickOnNumber.clicked_name[-1]: number4.opacity = 0.2
                      #  continueRoutine = True
    CodeComponent evaluateResponses_2
      Code Type = Py
      End Routine:
        #evaluate correctness of response and write into a new column TRUE, FALSE, or NO_ANSW
        if len(mouseClickOnCall.clicked_name) > 0:
            currentLoop.addData('callSignCorrect', mapCallSign[mouseClickOnCall.clicked_name[0]] == callSign)
            print(mapCallSign[mouseClickOnCall.clicked_name[0]])
        else:
            currentLoop.addData('callSignCorrect', "NO_ANSW")
        if len(mouseClickOnColour.clicked_name) > 0:
            currentLoop.addData('colourCorrect', mapColour[mouseClickOnColour.clicked_name[0]] == colour)
            print(mapColour[mouseClickOnColour.clicked_name[0]])
        else:
            currentLoop.addData('colourCorrect', "NO_ANSW")
        if len(mouseClickOnNumber.clicked_name) > 0:
            currentLoop.addData('numberCorrect', mapNumber[mouseClickOnNumber.clicked_name[0]] == number)
            print(mapNumber[mouseClickOnNumber.clicked_name[0]])
        else:
            currentLoop.addData('numberCorrect', "NO_ANSW")
    CodeComponent saveAfterEachTrial_2
      Code Type = Py
      End Routine:
        #sicherIstSicher
        #thisExp.saveAsWideText(filename+'.csv')
        #logging.flush()
    ImageComponent blankScreenAfterResponse_2
      image = images/blankScreen.png
      size = [1920, 1080]
      startVal [condition] = $mouseClickOnNumber.status==FINISHED
      stopVal [duration (s)] = 0.6
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  Routine audioTrial_eg
    SoundComponent sound_examples
      sound [set every repeat] = $audiofile
      startVal [frame N] = 0.0
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    CodeComponent code_example
      Code Type = Auto->JS
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      Begin Routine:
        # Trigger
        myClock = core.Clock()
        now = myClock.getTime()

        # Trigger times
        pp_start_time = now # + ptb.GetSecs()

        # Some runner prints for testing
        print('<<<< now')
        print(now)

         #
    PolygonComponent fixation_2
      fillColor = white
      lineWidth = 0.5
      opacity = 0.75
      shape = cross
      size = (0.05, 0.05)
      startVal [frame N] = 0
      stopVal [condition] = $sound_1.status==FINISHED
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    CodeComponent hideMouse_6
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
    ImageComponent screenAfterAudio_2
      image = images/grayScreen.png
      size = (0.5, 0.5)
      startVal [frame N] = $fixation.status==FINISHED  
      stopVal [time (s)] = 2 
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  Routine instrEG
    CodeComponent preparations_3
      Code Type = Auto->JS
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      Before Experiment:
        #import psychtoolbox as ptb
        from psychopy import sound
        import psychopy.visual
        import psychopy.event
        import psychopy.core

        clock = psychopy.core.Clock()
        print('TIME O_o')
        print(clock.getTime())
      Begin Experiment:
        #if (SubjectNumber % 2 == 0):
        #    Order=ABCD
        #else:
        #    Order=CDBA
    TextComponent instr_start_2
      letterHeight = 0.04
      startVal [frame N] = 0
      wrapWidth = 1
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      text:
        Sehr gut! Nun fahren wir mit dem Hauptteil fort.

        Folgend werden Sie verschiedene strukturierte Sätze mit jeweils drei wechselnden Wörtern hören (*...*) :

        Vorsicht *__*, geh sofort zum *__* Feld von der Spalte *__*.

        Für den der freien Felder gibt es vier mögliche Worte. Zum Beispiel:

        Vorsicht *Adler/Drossel/Kröter/Tiger*, geh sofort zum *gelben/grünen/roten/weissen* Feld von der Spalte *eins/zwei/drei/vier*.

        Hören Sie bitte gut zu. Ihre Aufgab ist es, nach jedem Satz die zu den drei Wörtern passenden Bilder der Reihenfolge nach mit der Maus auf dem Bildschirm anzuklicken.

        Einige der Sätze werden relativ einfach sein, andere etwas anspruchsvoller und gewisse scheinen gänzlich unverständlich.

        Versuchen Sie bitte, unabhängig von der Bedingung so gut als möglich hinzuhören und eine Antwort zu geben, Sie dürfen raten.

        <Klicken Sie auf die Abstandstaste/spacebar um die drei Beispielssätze zu machen>
    KeyboardComponent key_resp_inst_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse_7
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine restTrial_pre
    SoundComponent beep_rest_pre_start
      sound [set every repeat] = click_beep.wav
      startVal [frame N] = 0.0
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    PolygonComponent fixation_1
      fillColor = white
      lineWidth = 0.5
      opacity = 0.75
      shape = cross
      size = (0.05, 0.05)
      startVal [frame N] = 0
      stopVal [duration (s)] = 180
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    CodeComponent hideMouse_8
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
    ImageComponent screenAfterAudio_3
      image = images/grayScreen.png
      size = (0.5, 0.5)
      startVal [frame N] = $fixation.status==FINISHED  
      stopVal [time (s)] = 2 
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    SoundComponent beep_rest_pre_end
      sound [set every repeat] = click_beep.wav
      startVal [frame N] = 0.0
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    ParallelOutComponent pp_rest_pre_start
      address = 0x3FE8
      register = EIO
      startData = 9
      startVal [condition] = $beep_rest_pre_start.status==STARTED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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Flow
  Routine instrStart
  Routine instrRest_PRE
  Routine restTrial_pre
  Routine instrEG
  LoopInitiator trials_eg loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine audioTrial_eg
    Routine trial_eg
  LoopTerminator trials_eg
  Routine instrTask
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $orderFile
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine startBlock
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine audioTrial
      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine instrRest_POST
  Routine restBlock_post
  Routine thanks_end
