PsychoPy2experiment version="2022.2.1"
Settings
  Audio lib = pyo
  Experiment info = {'participant': 's00', 'order': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 2
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = SentenceInNoise
  keyboardBackend = ioHub
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Routines
  Routine audioTrial
    SoundComponent sound_1
      sound [set every repeat] = $audiofile
      startVal [time (s)] = 0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Trigger
        myClock = core.Clock()
        now = myClock.getTime()

        # Trigger times
        pp_start_time = now # + ptb.GetSecs()

        # Some runner prints for testing
        print('<<<< now')
        print(now)

         #
    PolygonComponent fixation
      fillColor = white
      lineWidth = 0.5
      opacity = 0.75
      shape = cross
      size = (0.05, 0.05)
      startVal [frame N] = 0
      stopVal [condition] = $sound_1.status==FINISHED
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    CodeComponent hideMouse_2
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
    ImageComponent screenAfterAudio
      image = images/grayScreen.png
      size = (0.5, 0.5)
      startVal [frame N] = $fixation.status==FINISHED  
      stopVal [time (s)] = 2 
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    ParallelOutComponent pp_start
      address = 0x3FE8
      register = EIO
      startData = 1
      startVal [condition] = $pp_start_time + 0.08
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t0_start
      address = 0x3FE8
      register = EIO
      startData = 101
      startVal [time (s)] = $firstSound_tmin
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t1_start
      address = 0x3FE8
      register = EIO
      startData = trigger_call
      startVal [time (s)] = $token_1_tmin
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t2_start
      address = 0x3FE8
      register = EIO
      startData = trigger_col
      startVal [time (s)] = $token_2_tmin
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t3_start
      address = 0x3FE8
      register = EIO
      startData = trigger_num
      startVal [time (s)] = $token_3_tmin
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_end
      address = 0x3FE8
      register = EIO
      startData = trigger_end
      startVal [time (s)] = $lastSound_tmax
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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  Routine trial
    CodeComponent setOpacityAndHideMouse
      Code Type = Py
      Begin Routine:
        #set opacity of response buttons to 1 (fully visible)
        call1.opacity = 1
        call2.opacity = 1
        call3.opacity = 1
        call4.opacity = 1

        colour1.opacity = 1
        colour2.opacity = 1
        colour3.opacity = 1
        colour4.opacity = 1

        number1.opacity = 1
        number2.opacity = 1
        number3.opacity = 1
        number4.opacity = 1
      Each Frame:
        #show mouse cursor only at the response screen
        win.mouseVisible = False
        if call1.status == STARTED:
            win.mouseVisible = True
    CodeComponent switchToNextTrialAfterResponseTimeOver
      Code Type = Py
      Begin Routine:
        participantResponseTime = None
        trialClock = core.Clock()
      Each Frame:
        if participantResponseTime == None:
            participantResponseTime = trialClock.getTime()

        #switch to the next trial when audio ended and response time (10 seconds) is over
        if participantResponseTime and trialClock.getTime() - participantResponseTime > 10 and not blankScreenAfterResponse.status == STARTED:
            continueRoutine = False
    CodeComponent mapStimuliLabels
      Code Type = Py
      Begin Experiment:
        # Mappings for stimuli properties
        mapCallSign = {
          "call1": "Ad",
          "call2": "Dr",
          "call3": "Kr",
          "call4": "Ti"
          }

        mapColour = {
          "colour1": "ge",
          "colour2": "gr",
          "colour3": "ro",
          "colour4": "we"
          }

        mapNumber = {
          "number1": "Ei",
          "number2": "Zw",
          "number3": "Dr",
          "number4": "Vi"
          }
    CodeComponent printoutCorrectAnswersForDebugging
      Code Type = Py
      Begin Routine:
        print("%s, %s, %s" % (callSign,colour,number))
    ImageComponent blankScreen
      image = images/grayScreen.png
      size = [1920, 1080]
      startVal [condition] = $screenAfterAudio.status==FINISHED
      stopVal [duration (s)] = 1.0
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    ImageComponent call1
      image = images/adler.png
      pos = (-0.4, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call2
      image = images/drossel.png
      pos = (-0.4, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call3
      image = images/kroete.png
      pos = (-0.4, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call4
      image = images/tiger.png
      pos = (-0.4, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour1
      image = images/gelb.png
      pos = (0.0, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour2
      image = images/gruen.png
      pos = (0.0, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour3
      image = images/rot.png
      pos = (0.0, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour4
      image = images/weiss.png
      pos = (0.0, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number1
      image = images/1.png
      pos = (0.4, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number2
      image = images/2.png
      pos = (0.4, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number3
      image = images/3.png
      pos = (0.4, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number4
      image = images/4.png
      pos = (0.4, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    MouseComponent mouseClickOnCall
      clickable = call1, call2, call3, call4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $blankScreen.status ==FINISHED
      timeRelativeTo = routine
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    CodeComponent disableCallButtons
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnCall.status = FINISHED
                        if call1.name != mouseClickOnCall.clicked_name[-1]: call1.opacity = 0.2
                        if call2.name != mouseClickOnCall.clicked_name[-1]: call2.opacity = 0.2
                        if call3.name != mouseClickOnCall.clicked_name[-1]: call3.opacity = 0.2
                        if call4.name != mouseClickOnCall.clicked_name[-1]: call4.opacity = 0.2
                        continueRoutine = True
    ParallelOutComponent pp_mouse_call
      address = 0x3FE8
      register = EIO
      startData = 1
      startVal [condition] = $mouseClickOnCall.getPressed()[0]
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    MouseComponent mouseClickOnColour
      clickable = colour1, colour2, colour3, colour4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $mouseClickOnCall.getPressed()[0]
      timeRelativeTo = routine
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    CodeComponent disableColourButtons
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnColour.status = FINISHED
                        if colour1.name != mouseClickOnColour.clicked_name[-1]: colour1.opacity = 0.2
                        if colour2.name != mouseClickOnColour.clicked_name[-1]: colour2.opacity = 0.2
                        if colour3.name != mouseClickOnColour.clicked_name[-1]: colour3.opacity = 0.2
                        if colour4.name != mouseClickOnColour.clicked_name[-1]: colour4.opacity = 0.2
                        continueRoutine = True
    ParallelOutComponent pp_mouse_colour
      address = 0x3FE8
      register = EIO
      startData = 2
      startVal [condition] = $mouseClickOnColour.status == FINISHED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    MouseComponent mouseClickOnNumber
      clickable = number1, number2, number3, number4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $mouseClickOnCall.status == FINISHED
      timeRelativeTo = routine
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    CodeComponent disableNumberButtons
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnNumber.status = FINISHED
                        if number1.name != mouseClickOnNumber.clicked_name[-1]: number1.opacity = 0.2
                        if number2.name != mouseClickOnNumber.clicked_name[-1]: number2.opacity = 0.2
                        if number3.name != mouseClickOnNumber.clicked_name[-1]: number3.opacity = 0.2
                        if number4.name != mouseClickOnNumber.clicked_name[-1]: number4.opacity = 0.2
                      #  continueRoutine = True
    ParallelOutComponent pp_mouse_number
      address = 0x3FE8
      register = EIO
      startData = 3
      startVal [condition] = $mouseClickOnNumber.status==FINISHEDD
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    CodeComponent evaluateResponses
      Code Type = Py
      End Routine:
        #evaluate correctness of response and write into a new column TRUE, FALSE, or NO_ANSW
        if len(mouseClickOnCall.clicked_name) > 0:
            currentLoop.addData('callSignCorrect', mapCallSign[mouseClickOnCall.clicked_name[0]] == callSign)
            print(mapCallSign[mouseClickOnCall.clicked_name[0]])
        else:
            currentLoop.addData('callSignCorrect', "NO_ANSW")
        if len(mouseClickOnColour.clicked_name) > 0:
            currentLoop.addData('colourCorrect', mapColour[mouseClickOnColour.clicked_name[0]] == colour)
            print(mapColour[mouseClickOnColour.clicked_name[0]])
        else:
            currentLoop.addData('colourCorrect', "NO_ANSW")
        if len(mouseClickOnNumber.clicked_name) > 0:
            currentLoop.addData('numberCorrect', mapNumber[mouseClickOnNumber.clicked_name[0]] == number)
            print(mapNumber[mouseClickOnNumber.clicked_name[0]])
        else:
            currentLoop.addData('numberCorrect', "NO_ANSW")
    CodeComponent saveAfterEachTrial
      Code Type = Py
      End Routine:
        #sicherIstSicher
        #thisExp.saveAsWideText(filename+'.csv')
        #logging.flush()
    ImageComponent blankScreenAfterResponse
      image = images/blankScreen.png
      size = [1920, 1080]
      startVal [condition] = $mouseClickOnNumber.status==FINISHED
      stopVal [duration (s)] = 0.6
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    ParallelOutComponent pp_respGrid
      address = 0x3FE8
      register = EIO
      startData = 7
      startVal [condition] = $blankScreen.status==FINISHED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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  Routine startBlock
    TextComponent blockStart
      letterHeight = 0.04
      startVal [time (s)] = 0
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      text:
        Anfang des nächsten Blocks

        <Klicken Sie auf die Abstandstaste/spacebar um fortzufahren >
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ParallelOutComponent pp_blockstart
      address = 0x3FE8
      register = EIO
      startData = 6
      startVal [condition] = $blockStart.status==FINISHED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    CodeComponent getOrder_2
      Code Type = Auto->JS
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      Begin Experiment:
        orderFile = "order" + expInfo['order']+ ".csv"
        print(orderFile)
  Routine instrRest_PRE
    CodeComponent prep_instrRest_pre
      Code Type = Auto->JS
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      Before Experiment:
        #import psychtoolbox as ptb
        from psychopy import sound
        import psychopy.visual
        import psychopy.event
        import psychopy.core

        clock = psychopy.core.Clock()
        print('TIME O_o')
        print(clock.getTime())
      Begin Experiment:
        #if (SubjectNumber % 2 == 0):
        #    Order=ABCD
        #else:
        #    Order=CDBA
    TextComponent instrRest_pre
      letterHeight = 0.04
      startVal [frame N] = 0
      wrapWidth = 1
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      text:
        Sind Sie bereit?

        -------------------------------------------------------------------------------

        Zu Beginn, bleiben Sie bitte während 4 Minuten so still wie möglich sitzen und schliessen Sie die Augen.

        Ein ‘beep’ kennzeichnet den Start und das Ende der Aufnahme.

        Bitte versuchen Sie, während dieser Aufnahme bis zum Ende so still wie möglich zu sitzen und die Augen geschlossen zu halten.


        <Klicken Sie auf die Abstandstaste/spacebar um fortzufahren >
    KeyboardComponent key_resp_instRest_pre
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse_3
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
    ParallelOutComponent pp_instrRest_PRE
      address = 0x3FE8
      register = EIO
      startData = 55
      startVal [condition] = $instrRest_pre.status==FINISHED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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  Routine instrRest_POST
    TextComponent instrRest_post
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        Sehr gut!
        -------------------------------------------------------------------------------

        Um die Aufnahme zu beenden, bitten wir Sie, nochmals 4 Minuten so still wie möglich zu sitzen und die Augen geschlossen zu halten.

        Ein ‘beep’ wird den Anfang und das Ende der Aufnahme angeben. Bitte sitzen Sie so still wie möglich und halten Sie die Augen geschlossen bis der zweite Ton erklingt.


        <Klicken Sie auf die Abstandstaste/spacebar um fortzufahren >
    KeyboardComponent key_resp_instRest_post
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse_4
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
    ParallelOutComponent pp_rest_post
      address = 0x3FE8
      register = EIO
      startData = 55
      startVal [condition] = $instrRest_post.status==STARTED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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  Routine instrStart
    TextComponent instr_start
      letterHeight = 0.03
      startVal [frame N] = 0
      wrapWidth = 1
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      text:
        WILKOMMEN!
        -------------------------------------------------------------------------------
        Dieses Experiment besteht aus 3 Teilen:

        1. Eine kurze Sequenz in Ruhe mit geschlossenen Augen.

        3. Der Hauptteil besteht aus 4 Blöcken mit Pausen dazwischen.

        3. Nochmals eine kurze Sequenz in Ruhe mit geschlossenen Augen.



        <Klicken Sie auf die Abstandstaste/spacebar um fortzufahren >
    KeyboardComponent key_resp_inst_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse_5
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine thanks_end
    TextComponent thanksText_end
      letterHeight = 0.04
      startVal [condition] = $beep_rest_post_end.status == FINISHED
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      text:
        Sehr gut!   :  )

        VIELEN DANK für Ihre Kollaboration und Zeit.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse_11
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine instrTask
    TextComponent instrTaskText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        Sehr gut!

        Sind Sie bereit, mit der Aufgabe zu beginnen? Sollten Sie noch Fragen haben, wenden Sie sich bitte an den Versuchsleiter.

        Versuchen Sie sich während der gesamten Aufgabe so wenig wie möglich zu bewegen.

        <Klicken Sie auf die Abstandstaste/spacebar um fortzufahren >
    KeyboardComponent key_resp_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
    CodeComponent getOrder
      Code Type = Auto->JS
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      Begin Experiment:
        orderFile = "order" + expInfo['order']+ ".csv"
        print('^^^^^----^-^')
        print(orderFile)
    ParallelOutComponent pp_instrTask
      address = 0x3FE8
      register = EIO
      startData = 5
      startVal [condition] = $instrTaskText.status==FINISHED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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  Routine trial_eg
    CodeComponent setOpacityAndHideMouse_2
      Code Type = Py
      Begin Routine:
        #set opacity of response buttons to 1 (fully visible)
        call1_2.opacity = 1
        call2_2.opacity = 1
        call3_2.opacity = 1
        call4_2.opacity = 1

        colour1_2.opacity = 1
        colour2_2.opacity = 1
        colour3_2.opacity = 1
        colour4_2.opacity = 1

        number1_2.opacity = 1
        number2_2.opacity = 1
        number3_2.opacity = 1
        number4_2.opacity = 1
      Each Frame:
        #show mouse cursor only at the response screen
        win.mouseVisible = False
        if call1_2.status == STARTED:
            win.mouseVisible = True
    CodeComponent switchToNextTrialAfterResponseTimeOver_2
      Code Type = Py
      Begin Routine:
        participantResponseTime = None
        trialClock = core.Clock()
      Each Frame:
        if participantResponseTime == None:
            participantResponseTime = trialClock.getTime()

        #switch to the next trial when audio ended and response time (10 seconds) is over
        if participantResponseTime and trialClock.getTime() - participantResponseTime > 10 and not blankScreenAfterResponse_2.status == STARTED:
            continueRoutine = False
    CodeComponent mapStimuliLabels_2
      Code Type = Py
      Begin Experiment:
        # Mappings for stimuli properties
        mapCallSign_2 = {
          "call1_2": "Ad",
          "call2_2": "Dr",
          "call3_2": "Kr",
          "call4_2": "Ti"
          }

        mapColour_2 = {
          "colour1_2": "ge",
          "colour2_2": "gr",
          "colour3_2": "ro",
          "colour4_2": "we"
          }

        mapNumber_2 = {
          "number1_2": "Ei",
          "number2_2": "Zw",
          "number3_2": "Dr",
          "number4_2": "Vi"
          }
    CodeComponent printoutCorrectAnswersForDebugging_2
      Code Type = Py
      Begin Routine:
        print("%s, %s, %s" % (callSign,colour,number))
    ImageComponent blankScreen_2
      image = images/grayScreen.png
      size = [1920, 1080]
      startVal [condition] = $screenAfterAudio_2.status==FINISHED
      stopVal [duration (s)] = 1.0
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    ImageComponent call1_2
      image = images/adler.png
      pos = (-0.4, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent call2_2
      image = images/drossel.png
      pos = (-0.4, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent call3_2
      image = images/kroete.png
      pos = (-0.4, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent call4_2
      image = images/tiger.png
      pos = (-0.4, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent colour1_2
      image = images/gelb.png
      pos = (0.0, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent colour2_2
      image = images/gruen.png
      pos = (0.0, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent colour3_2
      image = images/rot.png
      pos = (0.0, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent colour4_2
      image = images/weiss.png
      pos = (0.0, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent number1_2
      image = images/1.png
      pos = (0.4, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent number2_2
      image = images/2.png
      pos = (0.4, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent number3_2
      image = images/3.png
      pos = (0.4, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    ImageComponent number4_2
      image = images/4.png
      pos = (0.4, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen_2.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse_2.status == STARTED
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    MouseComponent mouseClickOnCall_2
      clickable = call1_2, call2_2, call3_2, call4_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $blankScreen_2.status ==FINISHED
      timeRelativeTo = routine
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    CodeComponent disableCallButtons_2
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnCall_2.status = FINISHED
                        if call1_2.name != mouseClickOnCall_2.clicked_name[-1]: call1_2.opacity = 0.2
                        if call2_2.name != mouseClickOnCall_2.clicked_name[-1]: call2_2.opacity = 0.2
                        if call3_2.name != mouseClickOnCall_2.clicked_name[-1]: call3_2.opacity = 0.2
                        if call4_2.name != mouseClickOnCall_2.clicked_name[-1]: call4_2.opacity = 0.2
                        continueRoutine = True
    MouseComponent mouseClickOnColour_2
      clickable = colour1_2, colour2_2, colour3_2, colour4_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $mouseClickOnCall_2.getPressed()[0]
      timeRelativeTo = routine
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    CodeComponent disableColourButtons_2
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnColour_2.status = FINISHED
                        if colour1_2.name != mouseClickOnColour_2.clicked_name[-1]: colour1_2.opacity = 0.2
                        if colour2_2.name != mouseClickOnColour_2.clicked_name[-1]: colour2_2.opacity = 0.2
                        if colour3_2.name != mouseClickOnColour_2.clicked_name[-1]: colour3_2.opacity = 0.2
                        if colour4_2.name != mouseClickOnColour_2.clicked_name[-1]: colour4_2.opacity = 0.2
                        continueRoutine = True
    MouseComponent mouseClickOnNumber_2
      clickable = number1_2, number2_2, number3_2, number4_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $mouseClickOnColour_2.status ==FINISHED
      timeRelativeTo = routine
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    CodeComponent disableNumberButtons_2
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnNumber_2.status = FINISHED
                        if number1_2.name != mouseClickOnNumber_2.clicked_name[-1]: number1_2.opacity = 0.2
                        if number2_2.name != mouseClickOnNumber_2.clicked_name[-1]: number2_2.opacity = 0.2
                        if number3_2.name != mouseClickOnNumber_2.clicked_name[-1]: number3_2.opacity = 0.2
                        if number4_2.name != mouseClickOnNumber_2.clicked_name[-1]: number4_2.opacity = 0.2
                      #  continueRoutine = True
    CodeComponent evaluateResponses_2
      Code Type = Py
      End Routine:
        #evaluate correctness of response and write into a new column TRUE, FALSE, or NO_ANSW
        if len(mouseClickOnCall_2.clicked_name) > 0:
            currentLoop.addData('callSignCorrect', mapCallSign_2[mouseClickOnCall_2.clicked_name[0]] == callSign)
            print(mapCallSign_2[mouseClickOnCall_2.clicked_name[0]])
        else:
            currentLoop.addData('callSignCorrect', "NO_ANSW")
        if len(mouseClickOnColour_2.clicked_name) > 0:
            currentLoop.addData('colourCorrect', mapColour_2[mouseClickOnColour_2.clicked_name[0]] == colour)
            print(mapColour_2[mouseClickOnColour_2.clicked_name[0]])
        else:
            currentLoop.addData('colourCorrect', "NO_ANSW")
        if len(mouseClickOnNumber_2.clicked_name) > 0:
            currentLoop.addData('numberCorrect', mapNumber_2[mouseClickOnNumber_2.clicked_name[0]] == number)
            print(mapNumber_2[mouseClickOnNumber_2.clicked_name[0]])
        else:
            currentLoop.addData('numberCorrect', "NO_ANSW")
    CodeComponent saveAfterEachTrial_2
      Code Type = Py
      End Routine:
        #sicherIstSicher
        #thisExp.saveAsWideText(filename+'.csv')
        #logging.flush()
    ImageComponent blankScreenAfterResponse_2
      image = images/grayScreen.png
      size = [1920, 1080]
      startVal [condition] = $mouseClickOnNumber.status==FINISHED
      stopVal [duration (s)] = 0.3
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  Routine audioTrial_eg
    SoundComponent sound_examples
      sound [set every repeat] = $audiofile
      startVal [frame N] = $instr_start_2.status == FINISHED
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    PolygonComponent fixation_2
      fillColor = white
      lineWidth = 0.5
      opacity = 0.75
      shape = cross
      size = (0.05, 0.05)
      startVal [frame N] = 0
      stopVal [condition] = $sound_examples.status==FINISHED
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    CodeComponent hideMouse_6
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
    ImageComponent screenAfterAudio_2
      image = images/grayScreen.png
      size = (0.5, 0.5)
      startVal [frame N] = $fixation_2.status==FINISHED  
      stopVal [time (s)] = 1
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  Routine restTrial_pre
    SoundComponent beep_rest_pre_start
      saveStartStop = False
      sound [set every repeat] = click_beep.wav
      startVal [condition] = $instrRest_pre.status==FINISHED
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    PolygonComponent fixation_1
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 0.5
      opacity = 0.75
      shape = cross
      size = (0.05, 0.05)
      startVal [frame N] = 0
      stopVal [duration (s)] = 4
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    CodeComponent hideMouse_8
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
    ImageComponent screenAfterAudio_3
      image = images/grayScreen.png
      size = (0.5, 0.5)
      startVal [frame N] = $fixation_1.status==FINISHED  
      stopVal [time (s)] = 2 
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    SoundComponent beep_rest_pre_end
      sound [set every repeat] = click_beep.wav
      startVal [condition] = $fixation_1.status == FINISHED
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    ParallelOutComponent pp_rest_pre_start
      address = 0x3FE8
      register = EIO
      startData = 8
      startVal [condition] = $beep_rest_pre_start.status==STARTED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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  Routine restTrial_post
    SoundComponent beep_rest_post_start
      saveStartStop = False
      sound [set every repeat] = click_beep.wav
      startVal [condition] = $instrRest_post.status == FINISHED
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    PolygonComponent fixation_3
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 0.5
      opacity = 0.75
      shape = cross
      size = (0.05, 0.05)
      startVal [frame N] = 0
      stopVal [duration (s)] = 240
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    CodeComponent hideMouse_9
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
    ImageComponent screenAfterAudio_4
      image = images/grayScreen.png
      size = (0.5, 0.5)
      startVal [frame N] = $fixation_3.status==FINISHED  
      stopVal [time (s)] = 2
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    SoundComponent beep_rest_post_end
      sound [set every repeat] = click_beep.wav
      startVal [condition] = $fixation_3.status == FINISHED
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    ParallelOutComponent pp_rest_pre_start_2
      address = 0x3FE8
      register = EIO
      startData = 9
      startVal [condition] = $beep_rest_post_start.status==STARTED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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  Routine endBlock
    TextComponent blockEnds
      letterHeight = 0.04
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = Blockende
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    CodeComponent hideMouse_10
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
    ParallelOutComponent pp_blockends
      address = 0x3FE8
      register = EIO
      startData = 60
      startVal [condition] = $blockEnds.status==FINISHED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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  Routine instrMain_1
    TextComponent instr_start_1
      letterHeight = 0.03
      startVal [condition] = $beep_rest_pre_end.status == FINISHED
      wrapWidth = 1
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      text:
        Sehr gut! Nun fahren wir mit dem Hauptteil fort.
        -------------------------------------------------------------------------------

        Folgend werden Sie verschiedene strukturierte Sätze mit jeweils drei wechselnden Wörtern hören:

        Vorsicht *__*, geh sofort zum *__* Feld von der Spalte *__*.


        Für den der freien Felder gibt es vier mögliche Worte, zum Beispiel:

        Vorsicht *Adler/Drossel/Kröter/Tiger*, geh sofort zum *gelben/grünen/roten/weissen* Feld von der Spalte *eins/zwei/drei/vier*.




        <Klicken Sie auf die Abstandstaste/spacebar um fortzufahren >
    KeyboardComponent key_resp_inst_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse_12
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine instrMain_2
    TextComponent instr_start_2
      letterHeight = 0.03
      startVal [condition] = $instr_start_1.status == FINISHED
      wrapWidth = 1
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      text:
         Hören Sie bitte gut zu.

        Ihre Aufgab ist es, nach jedem Satz die zu den drei Wörtern passenden Bilder der Reihenfolge nach mit der Maus auf dem Bildschirm anzuklicken.

        Einige der Sätze werden relativ einfach sein, andere etwas anspruchsvoller und gewisse scheinen gänzlich unverständlich.

        Versuchen Sie bitte, unabhängig von der Bedingung so gut als möglich hinzuhören und eine Antwort zu geben, Sie dürfen raten.


        <Klicken Sie auf die Abstandstaste/spacebar um 4 Beispielsätze zu machen>
    KeyboardComponent key_resp_inst_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse_7
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
    ParallelOutComponent pp_instr_start_2
      address = 0x3FE8
      register = EIO
      startData = 55
      startVal [condition] = $instr_start_2.status==FINISHED
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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Flow
  Routine instrStart
  Routine instrRest_PRE
  Routine restTrial_pre
  Routine instrMain_1
  Routine instrMain_2
  LoopInitiator trials_eg loopType="TrialHandler"
    conditionsFile = flow/Example_list.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('audiofile', 'audio/NV_DE_Neural2-D_Dr-we-Ei_0.9p.wav'), ('callSign', 'Dr'), ('colour', 'we'), ('number', 'Ei')]),
      OrderedDict([('audiofile', 'audio/NV_DE_Neural2-D_Dr-we-Ei_0.3p.wav'), ('callSign', 'Dr'), ('colour', 'we'), ('number', 'Ei')]),
      OrderedDict([('audiofile', 'audio/SiSSN_DE_Neural2-D_Kr-we-Dr_-2.5db.wav'), ('callSign', 'Kr'), ('colour', 'we'), ('number', 'Dr')]),
      OrderedDict([('audiofile', 'audio/SiSSN_DE_Neural2-D_Kr-we-Dr_-13db.wav'), ('callSign', 'Kr'), ('colour', 'we'), ('number', 'Dr')])]
    Routine audioTrial_eg
    Routine trial_eg
  LoopTerminator trials_eg
  Routine instrTask
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $orderFile
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine startBlock
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine audioTrial
      Routine trial
    LoopTerminator trials
    Routine endBlock
  LoopTerminator blocks
  Routine instrRest_POST
  Routine restTrial_post
  Routine thanks_end
