OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x8c1fc55b = 1.0
0x9f5c4075 = Neurofeedback example
0xf6b2e3fa = bci-examples
0xf8034a49 = Inria
Comment
  This is the script for acquiring the EEG data during
  the triggered experiment. It preprocesses the EEG
  data, online, computes the alpha envelope per
  channel and broadcasts this via LSL e.g. to PsychoPy.
  Without this script running, the PsychoPy part will
  not start. You do need to change the path of the filenames.
Comment
  For debugging, writing EEG files would be nice.
  However, we are not recording LPT triggers at
  the moment, so there are no markers in these
  files making them less useful.

  Hence, disabled.

  BUT: It may work, if the EEG is switched on, and
  configured in the OpenVibe Acquisition Server correctly.
  Then it may receive the trigger which then are sent into the
  .eeg files here in this scenario. Needs testing!

Generic stream reader => #0
  Filename = C:/Users/Becker/Documents/Neurofeedback/Data/TestingAlphaMap/Measurement_d5/OpenVibe/raw_block2.ov
#0.Output Signal -> Channel Selector "1:32" => #1
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
-> Channel Selector "10" => #2
  Channel List = 10
  Action = Select
  Channel Matching Method = Smart
#1 -> Channel Selector "21" => #3
  Channel List = 21
  Action = Select
  Channel Matching Method = Smart
Input - A=#2, Input - B=#3 -> Simple DSP "Mean Mastoids" => #4
  Equation = (A+B) / 2
Input 1=#4, Input 2=#1 -> Signal Merger
-> Reference Channel
  Channel = 1
  Channel Matching Method = Index
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 0.125
  Epoch 1 intervals (in sec) = 0.0625
-> Simple DSP
  Equation = 10*log10(x*x)
-> Signal average
-> Epoch average => #11
  Averaging type = Moving epoch average
  Epoch count = 5
Data=#11 -> Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 1
  Vertical Scale = 0.5
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Input signal=#11 -> LSL Export (Gipsa)
  Stream name = OpenViBE Alpha Stream
  Stream type = EEG_extracted
Acquisition client => #14
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
EEG stream=#0.Output Signal, Stimulations=#14.Stimulations -> 0x341d3912 BrainVision Format File Writer
  Filename (header in vhdr format) = C:/Users/Becker/Documents/Neurofeedback/Tmp/raw.vhdr
  Marker to OV Stimulation dictionary =
  Convert OpenViBE Stimulations to markers = true
  Use full data and marker file names in header = false
EEG stream=#11, Stimulations=#14.Stimulations -> 0x341d3912 BrainVision Format File Writer
  Filename (header in vhdr format) = C:/Users/Becker/Documents/Neurofeedback/Tmp/processed.vhdr
  Marker to OV Stimulation dictionary =
  Convert OpenViBE Stimulations to markers = true
  Use full data and marker file names in header = false
