OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.1)
0x8c1fc55b = 1.0
0x9f5c4075 = Neurofeedback example
0xf6b2e3fa = bci-examples
0xf8034a49 = Inria
Comment
  CORRECT PATH?
Comment
  This is the script for acquiring the EEG data during
  the triggered experiment. It preprocesses the EEG
  data, online, computes the alpha envelope per
  channel and broadcasts this via LSL e.g. to PsychoPy.
  Without this script running, the PsychoPy part will
  not start. You do need to change the path of the filenames.
Comment
  CORRECT PATH?
Comment
  CORRECT PATH?
Comment
  CORRECT PATH?
Comment
  CORRECT PATH?

Generic stream reader => #0
  Filename = C:/Users/Becker/Documents/Neurofeedback/Acquisition Material/3_Revised_Acquisition_Material_RevDesign_9/OpenVibe/Alpha_triggered_debug.ov
#0.Output Signal -> Channel Selector "1:64" => #1
  Channel List = 1:64
  Action = Select
  Channel Matching Method = Smart
-> Channel Selector "10" => #2
  Channel List = 10
  Action = Select
  Channel Matching Method = Smart
#1 -> Channel Selector "21" => #3
  Channel List = 21
  Action = Select
  Channel Matching Method = Smart
Input - A=#2, Input - B=#3 -> Simple DSP "Mean Mastoids" => #4
  Equation = (A+B) / 2
Input 1=#4, Input 2=#1 -> Signal Merger
-> Reference Channel
  Channel = 1
  Channel Matching Method = Index
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 0.125
  Epoch 1 intervals (in sec) = 0.0625
-> Simple DSP
  Equation = 10*log10(x*x)
-> Signal average
-> Epoch average => #11
  Averaging type = Moving epoch average
  Epoch count = 5
-> Spatial Filter => #12
  Spatial Filter Coefficients = -0.65366;-0.8439;-0.34247;0.26497;-0.96761;0.17281;-0.76015;-0.05704;1.2634;2.2554;1.5669;-0.23876;-0.65028;1.3928;1.5245;-0.56074;-0.8411;-0.38715;-0.20447;0.36553;2.2554;0.38178;-1.7044;-1.0085;-1.0204;1.0637;-0.24061;-0.19489;-0.49427;-0.6571;0.19257;-0.87227
  Number of Output Channels = 1
  Number of Input Channels = 32
  Filter matrix file =
  0x8d21ff41 = C:/Users/Becker/Documents/Neurofeedback/Acquisition Material/3_Revised_Acquisition_Material_RevDesign_9/OpenVibe/Alpha_triggered_map_spatial_filters.cfg
Input signal=#12 -> LSL Export (Gipsa)
  Stream name = OpenViBE Alpha Stream
  Stream type = EEG_extracted
Input signal=#11 -> LSL Export (Gipsa)
  Stream name = OpenViBEAlphaStream32
  Stream type = EEG_32_extracted
0x341d3912 Acquisition client => #15
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
EEG stream=#0.Output Signal, Stimulations=#15.Stimulations -> BrainVision Format File Writer
  Filename (header in vhdr format) = C:/Users/Becker/Documents/Neurofeedback/Acquisition Material/3_Revised_Acquisition_Material_RevDesign_9/raw_pre_ME_debug.vhdr
  Marker to OV Stimulation dictionary =
  Convert OpenViBE Stimulations to markers = true
  Use full data and marker file names in header = false
EEG stream=#11, Stimulations=#15.Stimulations -> BrainVision Format File Writer
  Filename (header in vhdr format) = C:/Users/Becker/Documents/Neurofeedback/Acquisition Material/3_Revised_Acquisition_Material_RevDesign_9/processed_pre_ME_debug.vhdr
  Marker to OV Stimulation dictionary =
  Convert OpenViBE Stimulations to markers = true
  Use full data and marker file names in header = false
Data=#12, Stimulations=#15.Stimulations -> Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 1
  Vertical Scale = 0.5
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
EEG stream=#12, Stimulations=#15.Stimulations -> BrainVision Format File Writer
  Filename (header in vhdr format) = C:/Users/Becker/Documents/Neurofeedback/Acquisition Material/3_Revised_Acquisition_Material_RevDesign_9/processed_sf_pre_ME_debug.vhdr
  Marker to OV Stimulation dictionary =
  Convert OpenViBE Stimulations to markers = true
  Use full data and marker file names in header = false
Data=#11, Stimulations=#15.Stimulations -> Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 1
  Vertical Scale = 0.5
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
