PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'order': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 2
  Units = height
  Window size (pixels) = [1440, 2560]
  expName = SentenceInNoise
  keyboardBackend = ioHub
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Routines
  Routine instrTraining
    TextComponent instrTrainText
      letterHeight = 0.04
      startVal [frame N] = 0
      wrapWidth = 1.5
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      text:
        Jetzt hast du zuerst die Möglichkeit, die Aufgabe zu üben.

        Schau bitte in die Mitte des Bildschirms, wo ein Kreis zu sehen sein wird.
        Bei einigen Sätzen wird der Kreis pulsieren.

        Höre bitte den Satz und versuche, zu verstehen, welche drei Wörter da vorkommen.

        Jeder Satz hat dieselbe Struktur:

                Vorsicht *Adler*, gang sofort zum *gäle* Fäld vo de Spalte *eis*.

        Nach jedem Satz solltest du anklicken, welche drei Wörter du rausgehört hast.
        Dafür klickst du auf die entsprechenden Bilder.

        Drücke bitte die Leertaste, um zu beginnen.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
    CodeComponent getOrder
      Code Type = Py
      Begin Experiment:
        firstHalf = "flow/orders/order%sA.csv" % expInfo['order']
        secondHalf = "flow/orders/order%sB.csv" % expInfo['order']
  Routine instrExperiment
    TextComponent instrExpText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Wir fangen nun mit dem Experiment an.

        Schau bitte in die Mitte des Bildschirms während du die Sätze anhörst.

        Nach jedem Satz solltest du auf die entsprechenden Bilder klicken.

        Drücke bitte die Leertaste, um zu beginnen.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine short_pause
    TextComponent shortPauseText
      letterHeight = 0.04
      startVal [time (s)] = 0
      stopVal [time (s)] = 9.5
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      text:
        Kurze Pause.

        Nach dem Signalton geht es gleich weiter.
    CodeComponent skipShortPause
      Code Type = Py
      Each Frame:
        if seq == 4:
            continueRoutine = False
    SoundComponent shortPauseTone
      sound = tone.wav
      startVal [condition] = $shortPauseText.status==FINISHED
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    ImageComponent waitAfterTone
      image = images/blankScreen.png
      size = [1920, 1080]
      startVal [condition] = $shortPauseTone.status==FINISHED
      stopVal [duration (s)] = 1.0
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    CodeComponent saveAfterEachBlock
      Code Type = Py
      Begin Routine:
        #sicherIstSicher SAve after each block
        thisExp.saveAsWideText(filename+'.csv')
        logging.flush()
  Routine long_pause
    TextComponent longPauseText
      letterHeight = 0.04
      startVal [time (s)] = 0
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      text:
        Du hast nun die Hälfte geschafft!

        Du kannst dir gerne eine Pause nehmen.

        Drücke bitte die Leertaste, wenn du bereit bist fortzufahren.
    KeyboardComponent longPauseResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instrExposure
    TextComponent instrExposureText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Jetzt hörst du gleich vier Sätze, die noch nicht computerbearbeitet sind. So bekommmst du eine Vorstellung, wie sich die Sätze in Normalsprache anhören.

        Du musst noch nichts tun, ausser zuhören. Die Übung beginnt danach.

        Drücke bitte die Leertaste, um zu beginnen.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouseOnBegin
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine exposure
    SoundComponent originalSentence
      sound [set every repeat] = $audioFile
      startVal [frame N] = 0.0
      syncScreenRefresh = False
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    ImageComponent waitAfterSound
      image = images/grayScreen.png
      size = (2, 2)
      startVal [condition] = $originalSentence.status==FINISHED
      stopVal [duration (s)] = 1.0
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  Routine thanks
    TextComponent thanksText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        That's all folks!

        Vielen Dank für deine Teilnahme an unserer Studie und deinen wichtigen Beitrag zu Sprachverarbeitung.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine audioTrial
    SoundComponent sound_1
      sound [set every repeat] = $audiofile
      startVal [frame N] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        Trigger1Go=Trigger1+sound_1.getOns()
        Trigger2Go=Trigger2sound_1.getOns()
        Trigger3Go=Trigger3sound_1.getOns()
    PolygonComponent fixation
      fillColor = white
      lineWidth = 0.5
      opacity = 0.75
      shape = cross
      size = (0.05, 0.05)
      startVal [frame N] = 0
      stopVal [condition] = $sound_1.status==FINISHED
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    ImageComponent screenAfterAudio
      image = images/grayScreen.png
      size = (0.5, 0.5)
      startVal [frame N] = $fixation.status==FINISHED  
      stopVal [time (s)] = 2 
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    ParallelOutComponent p_port
      address = 0x0378
      register = EIO
      startData = Trigger1Value
      startVal [time (s)] = $Trigger1Go
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = False
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  Routine trial
    CodeComponent setOpacityAndHideMouse
      Code Type = Py
      Begin Routine:
        #set opacity of response buttons to 1 (fully visible)
        call1.opacity = 1
        call2.opacity = 1
        call3.opacity = 1
        call4.opacity = 1

        colour1.opacity = 1
        colour2.opacity = 1
        colour3.opacity = 1
        colour4.opacity = 1

        number1.opacity = 1
        number2.opacity = 1
        number3.opacity = 1
        number4.opacity = 1
      Each Frame:
        #show mouse cursor only at the response screen
        win.mouseVisible = False
        if call1.status == STARTED:
            win.mouseVisible = True
    CodeComponent switchToNextTrialAfterResponseTimeOver
      Code Type = Py
      Begin Routine:
        participantResponseTime = None
        trialClock = core.Clock()
      Each Frame:
        if participantResponseTime == None:
            participantResponseTime = trialClock.getTime()

        #switch to the next trial when the video is ended and response time (10 seconds) is over
        if participantResponseTime and trialClock.getTime() - participantResponseTime > 10 and not blankScreenAfterResponse.status == STARTED:
            continueRoutine = False
    CodeComponent mapStimuliLabels
      Code Type = Py
      Begin Experiment:
        # Mappings for stimuli properties
        mapCallSign = {
          "call1": "Ad",
          "call2": "Dr",
          "call3": "Ti",
          "call4": "Un"
          }

        mapColour = {
          "colour1": "Ge",
          "colour2": "Gr",
          "colour3": "Ro",
          "colour4": "We"
          }

        mapNumber = {
          "number1": 1,
          "number2": 2,
          "number3": 3,
          "number4": 4
          }
    CodeComponent printoutCorrectAnswersForDebugging
      Code Type = Py
      Begin Routine:
        print("%s, %s, %s" % (callSign,colour,number))
    ImageComponent blankScreen
      image = images/grayScreen.png
      size = [1920, 1080]
      startVal [condition] = $screenAfterAudio.status==FINISHED
      stopVal [duration (s)] = 1.0
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    ImageComponent call1
      image = images/adler.png
      pos = (-0.4, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call2
      image = images/drossel.png
      pos = (-0.4, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call3
      image = images/tiger.png
      pos = (-0.4, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call4
      image = images/unke.png
      pos = (-0.4, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour1
      image = images/gelb.png
      pos = (0.0, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour2
      image = images/gruen.png
      pos = (0.0, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour3
      image = images/rot.png
      pos = (0.0, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour4
      image = images/weiss.png
      pos = (0.0, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number1
      image = images/1.png
      pos = (0.4, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number2
      image = images/2.png
      pos = (0.4, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number3
      image = images/3.png
      pos = (0.4, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number4
      image = images/4.png
      pos = (0.4, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    MouseComponent mouseClickOnCall
      clickable = call1, call2, call3, call4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $blankScreen.status ==FINISHED
      timeRelativeTo = routine
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    CodeComponent disableCallButtons
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnCall.status = FINISHED
                        if call1.name != mouseClickOnCall.clicked_name[-1]: call1.opacity = 0.2
                        if call2.name != mouseClickOnCall.clicked_name[-1]: call2.opacity = 0.2
                        if call3.name != mouseClickOnCall.clicked_name[-1]: call3.opacity = 0.2
                        if call4.name != mouseClickOnCall.clicked_name[-1]: call4.opacity = 0.2
                        continueRoutine = True
    MouseComponent mouseClickOnColour
      clickable = colour1, colour2, colour3, colour4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $mouseClickOnCall.status==FINISHED
      timeRelativeTo = routine
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    CodeComponent disableColourButtons
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnColour.status = FINISHED
                        if colour1.name != mouseClickOnColour.clicked_name[-1]: colour1.opacity = 0.2
                        if colour2.name != mouseClickOnColour.clicked_name[-1]: colour2.opacity = 0.2
                        if colour3.name != mouseClickOnColour.clicked_name[-1]: colour3.opacity = 0.2
                        if colour4.name != mouseClickOnColour.clicked_name[-1]: colour4.opacity = 0.2
                        continueRoutine = True
    MouseComponent mouseClickOnNumber
      clickable = number1, number2, number3, number4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $mouseClickOnColour.status ==FINISHED
      timeRelativeTo = routine
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    CodeComponent disableNumberButtons
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnNumber.status = FINISHED
                        if number1.name != mouseClickOnNumber.clicked_name[-1]: number1.opacity = 0.2
                        if number2.name != mouseClickOnNumber.clicked_name[-1]: number2.opacity = 0.2
                        if number3.name != mouseClickOnNumber.clicked_name[-1]: number3.opacity = 0.2
                        if number4.name != mouseClickOnNumber.clicked_name[-1]: number4.opacity = 0.2
                        #continueRoutine = True
    CodeComponent evaluateResponses
      Code Type = Py
      End Routine:
        #evaluate correctness of response and write into a new column TRUE, FALSE, or NO_ANSW
        if len(mouseClickOnCall.clicked_name) > 0:
            currentLoop.addData('callSignCorrect', mapCallSign[mouseClickOnCall.clicked_name[0]] == callSign)
            print(mapCallSign[mouseClickOnCall.clicked_name[0]])
        else:
            currentLoop.addData('callSignCorrect', "NO_ANSW")
        if len(mouseClickOnColour.clicked_name) > 0:
            currentLoop.addData('colourCorrect', mapColour[mouseClickOnColour.clicked_name[0]] == colour)
            print(mapColour[mouseClickOnColour.clicked_name[0]])
        else:
            currentLoop.addData('colourCorrect', "NO_ANSW")
        if len(mouseClickOnNumber.clicked_name) > 0:
            currentLoop.addData('numberCorrect', mapNumber[mouseClickOnNumber.clicked_name[0]] == number)
            print(mapNumber[mouseClickOnNumber.clicked_name[0]])
        else:
            currentLoop.addData('numberCorrect', "NO_ANSW")
    CodeComponent saveAfterEachTrial
      Code Type = Py
      End Routine:
        #sicherIstSicher
        #thisExp.saveAsWideText(filename+'.csv')
        #logging.flush()
    ImageComponent blankScreenAfterResponse
      image = images/blankScreen.png
      size = [1920, 1080]
      startVal [condition] = $mouseClickOnNumber.status==FINISHED
      stopVal [duration (s)] = 0.6
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Flow
  Routine instrTraining
  LoopInitiator training loopType="TrialHandler"
    conditionsFile = tts-golang-selected_stimList.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('audiofile', 'audio/NV_DE_Neural2-D_Ad-ge-Dr_0.2p.wav'), ('duration', 5.4325), ('noise', 'NV'), ('voice', 'Neural2-D'), ('words', 'Ad-ge-Dr'), ('callSign', 'Ad'), ('colour', 'ge'), ('number', 'Dr'), ('levels', '0.2p'), ('file', 'DE_Neural2-D_Ad-ge-Dr.TextGrid'), ('firstSound_tmin', 0.16712), ('lastSound_tmax', 4.69712), ('token_1_tmin', 0.76712), ('token_1_tmax', 1.34712), ('token_2_tmin', 2.49712), ('token_2_tmax', 2.76712), ('token_3_tmin', 3.92712), ('token_3_tmax', 4.36712)]),
      OrderedDict([('audiofile', 'audio/NV_DE_Neural2-D_Ad-ge-Dr_0.4p.wav'), ('duration', 5.4325), ('noise', 'NV'), ('voice', 'Neural2-D'), ('words', 'Ad-ge-Dr'), ('callSign', 'Ad'), ('colour', 'ge'), ('number', 'Dr'), ('levels', '0.4p'), ('file', 'DE_Neural2-D_Ad-ge-Dr.TextGrid'), ('firstSound_tmin', 0.16712), ('lastSound_tmax', 4.69712), ('token_1_tmin', 0.76712), ('token_1_tmax', 1.34712), ('token_2_tmin', 2.49712), ('token_2_tmax', 2.76712), ('token_3_tmin', 3.92712), ('token_3_tmax', 4.36712)]),
      OrderedDict([('audiofile', 'audio/NV_DE_Neural2-D_Ad-ge-Dr_0.6p.wav'), ('duration', 5.4325), ('noise', 'NV'), ('voice', 'Neural2-D'), ('words', 'Ad-ge-Dr'), ('callSign', 'Ad'), ('colour', 'ge'), ('number', 'Dr'), ('levels', '0.6p'), ('file', 'DE_Neural2-D_Ad-ge-Dr.TextGrid'), ('firstSound_tmin', 0.16712), ('lastSound_tmax', 4.69712), ('token_1_tmin', 0.76712), ('token_1_tmax', 1.34712), ('token_2_tmin', 2.49712), ('token_2_tmax', 2.76712), ('token_3_tmin', 3.92712), ('token_3_tmax', 4.36712)]),
      OrderedDict([('audiofile', 'audio/NV_DE_Neural2-D_Ad-ge-Dr_0.75p.wav'), ('duration', 5.4325), ('noise', 'NV'), ('voice', 'Neural2-D'), ('words', 'Ad-ge-Dr'), ('callSign', 'Ad'), ('colour', 'ge'), ('number', 'Dr'), ('levels', '0.75p'), ('file', 'DE_Neural2-D_Ad-ge-Dr.TextGrid'), ('firstSound_tmin', 0.16712), ('lastSound_tmax', 4.69712), ('token_1_tmin', 0.76712), ('token_1_tmax', 1.34712), ('token_2_tmin', 2.49712), ('token_2_tmax', 2.76712), ('token_3_tmin', 3.92712), ('token_3_tmax', 4.36712)])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
    Routine audioTrial
    Routine trial
  LoopTerminator training
  Routine instrExperiment
  LoopInitiator blockA loopType="TrialHandler"
    conditionsFile = $block
    loopType = random
    nReps = 1
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  LoopTerminator blockA
  Routine thanks
