PsychoPy2experiment version="2022.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 's00', 'order': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = SentenceInNoise
  keyboardBackend = ioHub
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Routines
  Routine instrTraining
    CodeComponent preparations
      Code Type = Auto->JS
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      Before Experiment:
        import psychtoolbox as ptb
        from psychopy import sound
        import psychopy.visual
        import psychopy.event
        import psychopy.core

        clock = psychopy.core.Clock()
        print('TIME O_o')
        print(clock.getTime())
      Begin Experiment:
        #if (SubjectNumber % 2 == 0):
        #    Order=ABCD
        #else:
        #    Order=CDBA
    TextComponent instrTrainText
      letterHeight = 0.04
      startVal [frame N] = 0
      wrapWidth = 1
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      text:
        Jetzt hast du zuerst die Möglichkeit, die Aufgabe zu üben.

        Schau bitte in die Mitte des Bildschirms, wo ein Kreis zu sehen sein wird.
        Bei einigen Sätzen wird der Kreis pulsieren.

        Höre bitte den Satz und versuche, zu verstehen, welche drei Wörter da vorkommen.

        Jeder Satz hat dieselbe Struktur:

                Vorsicht *Adler*, gang sofort zum *gäle* Fäld vo de Spalte *eis*.

        Nach jedem Satz solltest du anklicken, welche drei Wörter du rausgehört hast.
        Dafür klickst du auf die entsprechenden Bilder.

        Drücke bitte die Leertaste, um zu beginnen.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
    CodeComponent getOrder
      Code Type = Auto->JS
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      Begin Experiment:
        orderFile = "order" + expInfo['order']+ ".csv"
  Routine instrExperiment
    TextComponent instrExpText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Wir fangen nun mit dem Experiment an.

        Schau bitte in die Mitte des Bildschirms während du die Sätze anhörst.

        Nach jedem Satz solltest du auf die entsprechenden Bilder klicken.

        Drücke bitte die Leertaste, um zu beginnen.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine short_pause
    TextComponent shortPauseText
      letterHeight = 0.04
      startVal [time (s)] = 0
      stopVal [time (s)] = 9.5
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      text:
        Kurze Pause.

        Nach dem Signalton geht es gleich weiter.
    CodeComponent skipShortPause
      Code Type = Py
      Each Frame:
        if seq == 4:
            continueRoutine = False
    SoundComponent shortPauseTone
      sound = tone.wav
      startVal [condition] = $shortPauseText.status==FINISHED
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    ImageComponent waitAfterTone
      image = images/blankScreen.png
      size = [1920, 1080]
      startVal [condition] = $shortPauseTone.status==FINISHED
      stopVal [duration (s)] = 1.0
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    CodeComponent saveAfterEachBlock
      Code Type = Py
      Begin Routine:
        #sicherIstSicher SAve after each block
        thisExp.saveAsWideText(filename+'.csv')
        logging.flush()
  Routine long_pause
    TextComponent longPauseText
      letterHeight = 0.04
      startVal [time (s)] = 0
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      text:
        Du hast nun die Hälfte geschafft!

        Du kannst dir gerne eine Pause nehmen.

        Drücke bitte die Leertaste, wenn du bereit bist fortzufahren.
    KeyboardComponent longPauseResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instrExposure
    TextComponent instrExposureText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Jetzt hörst du gleich vier Sätze, die noch nicht computerbearbeitet sind. So bekommmst du eine Vorstellung, wie sich die Sätze in Normalsprache anhören.

        Du musst noch nichts tun, ausser zuhören. Die Übung beginnt danach.

        Drücke bitte die Leertaste, um zu beginnen.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouseOnBegin
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine exposure
    SoundComponent originalSentence
      sound [set every repeat] = $audioFile
      startVal [frame N] = 0.0
      syncScreenRefresh = False
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    ImageComponent waitAfterSound
      image = images/grayScreen.png
      size = (2, 2)
      startVal [condition] = $originalSentence.status==FINISHED
      stopVal [duration (s)] = 1.0
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  Routine thanks
    TextComponent thanksText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        That's all folks!

        Vielen Dank für deine Teilnahme an unserer Studie und deinen wichtigen Beitrag zu Sprachverarbeitung.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine audioTrial
    SoundComponent sound_1
      sound [set every repeat] = $audiofile
      startVal [frame N] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Trigger
        pp_start_code = 100

        # Trigger times
        pp_start_time = ptb.GetSecs()
        pp_end_time = pp_start_time + token_3_tmax

        pp_t1_start_time = ptb.GetSecs()+token_1_tmin
        pp_t1_end_time = ptb.GetSecs()+token_1_tmax

        pp_t2_start_time = ptb.GetSecs()+token_2_tmin
        pp_t2_end_time = ptb.GetSecs()+token_2_tmax

        pp_t3_start_time = ptb.GetSecs()+token_3_tmin
        pp_t3_end_time = ptb.GetSecs()+token_3_tmax

        #
    PolygonComponent fixation
      fillColor = white
      lineWidth = 0.5
      opacity = 0.75
      shape = cross
      size = (0.05, 0.05)
      startVal [frame N] = 0
      stopVal [condition] = $sound_1.status==FINISHED
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    CodeComponent hideMouse_2
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
      End Routine:
        print('~~~~~~trigger codes d[-_-]b')
        print(trigger_call)
        print(trigger_col)
        print(trigger_num)
        print('~~~~~~~trigger times [-_-]')
        print(pp_start_time)
        print (pp_t1_start_time)
        print (pp_t1_start_time + 80)
        print (pp_t1_end_time)
        #
    ImageComponent screenAfterAudio
      image = images/grayScreen.png
      size = (0.5, 0.5)
      startVal [frame N] = $fixation.status==FINISHED  
      stopVal [time (s)] = 2 
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    ParallelOutComponent pp_start
      address = 0x3FE8
      register = EIO
      startData = trigger_start
      startVal [condition] = $pp_start_time + 80
      stopData = 0
      stopVal [duration (s)] = 0.03
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t1_start
      address = 0x3FE8
      register = EIO
      startData = trigger_call
      startVal [condition] = $pp_t1_start_time + 80
      stopData = 0
      stopVal [duration (s)] = 0.03
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t1_end
      address = 0x3FE8
      register = EIO
      startData = trigger_call + 4
      startVal [condition] = $pp_t1_end_time + 80
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t2_start
      address = 0x3FE8
      disabled = True
      register = EIO
      startData = trigger_col
      startVal [condition] = $pp_t2_start_time + 80
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t2_end
      address = 0x3FE8
      disabled = True
      register = EIO
      startData = trigger_col + 4
      startVal [condition] = $pp_t2_end_time + 80
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t3_start
      address = 0x3FE8
      disabled = True
      register = EIO
      startData = trigger_num
      startVal [condition] = $pp_t3_start_time + 80
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_t3_end
      address = 0x3FE8
      disabled = True
      register = EIO
      startData = trigger_num + 4
      startVal [condition] = $pp_t3_end_time + 80
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_end
      address = 0x3FE8
      disabled = True
      register = EIO
      startData = trigger_end
      startVal [condition] = $pp_end_time + 80
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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  Routine trial
    CodeComponent setOpacityAndHideMouse
      Code Type = Py
      Begin Routine:
        #set opacity of response buttons to 1 (fully visible)
        call1.opacity = 1
        call2.opacity = 1
        call3.opacity = 1
        call4.opacity = 1

        colour1.opacity = 1
        colour2.opacity = 1
        colour3.opacity = 1
        colour4.opacity = 1

        number1.opacity = 1
        number2.opacity = 1
        number3.opacity = 1
        number4.opacity = 1
      Each Frame:
        #show mouse cursor only at the response screen
        win.mouseVisible = False
        if call1.status == STARTED:
            win.mouseVisible = True
    CodeComponent switchToNextTrialAfterResponseTimeOver
      Code Type = Py
      Begin Routine:
        participantResponseTime = None
        trialClock = core.Clock()
      Each Frame:
        if participantResponseTime == None:
            participantResponseTime = trialClock.getTime()

        #switch to the next trial when audio ended and response time (10 seconds) is over
        if participantResponseTime and trialClock.getTime() - participantResponseTime > 10 and not blankScreenAfterResponse.status == STARTED:
            continueRoutine = False
    CodeComponent mapStimuliLabels
      Code Type = Py
      Begin Experiment:
        # Mappings for stimuli properties
        mapCallSign = {
          "call1": "Ad",
          "call2": "Dr",
          "call3": "Ti",
          "call4": "Kr"
          }

        mapColour = {
          "colour1": "Ge",
          "colour2": "Gr",
          "colour3": "Ro",
          "colour4": "We"
          }

        mapNumber = {
          "number1": 1,
          "number2": 2,
          "number3": 3,
          "number4": 4
          }
    CodeComponent printoutCorrectAnswersForDebugging
      Code Type = Py
      Begin Routine:
        print("%s, %s, %s" % (callSign,colour,number))
    ImageComponent blankScreen
      image = images/grayScreen.png
      size = [1920, 1080]
      startVal [condition] = $screenAfterAudio.status==FINISHED
      stopVal [duration (s)] = 1.0
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    ImageComponent call1
      image = images/adler.png
      pos = (-0.4, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call2
      image = images/drossel.png
      pos = (-0.4, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call3
      image = images/tiger.png
      pos = (-0.4, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent call4
      image = images/kroete.png
      pos = (-0.4, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour1
      image = images/gelb.png
      pos = (0.0, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour2
      image = images/gruen.png
      pos = (0.0, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour3
      image = images/rot.png
      pos = (0.0, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent colour4
      image = images/weiss.png
      pos = (0.0, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number1
      image = images/1.png
      pos = (0.4, 0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number2
      image = images/2.png
      pos = (0.4, .10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number3
      image = images/3.png
      pos = (0.4, -.10416666666666666665)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    ImageComponent number4
      image = images/4.png
      pos = (0.4, -0.3125)
      size = (0.18, 0.18)
      startVal [condition] = $blankScreen.status ==FINISHED
      stopVal [condition] = $blankScreenAfterResponse.status == STARTED
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    MouseComponent mouseClickOnCall
      clickable = call1, call2, call3, call4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $blankScreen.status ==FINISHED
      timeRelativeTo = routine
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    CodeComponent disableCallButtons
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnCall.status = FINISHED
                        if call1.name != mouseClickOnCall.clicked_name[-1]: call1.opacity = 0.2
                        if call2.name != mouseClickOnCall.clicked_name[-1]: call2.opacity = 0.2
                        if call3.name != mouseClickOnCall.clicked_name[-1]: call3.opacity = 0.2
                        if call4.name != mouseClickOnCall.clicked_name[-1]: call4.opacity = 0.2
                        continueRoutine = True
    MouseComponent mouseClickOnColour
      clickable = colour1, colour2, colour3, colour4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $mouseClickOnCall.getPressed()[0]
      timeRelativeTo = routine
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    CodeComponent disableColourButtons
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnColour.status = FINISHED
                        if colour1.name != mouseClickOnColour.clicked_name[-1]: colour1.opacity = 0.2
                        if colour2.name != mouseClickOnColour.clicked_name[-1]: colour2.opacity = 0.2
                        if colour3.name != mouseClickOnColour.clicked_name[-1]: colour3.opacity = 0.2
                        if colour4.name != mouseClickOnColour.clicked_name[-1]: colour4.opacity = 0.2
                        continueRoutine = True
    MouseComponent mouseClickOnNumber
      clickable = number1, number2, number3, number4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $mouseClickOnColour.status ==FINISHED
      timeRelativeTo = routine
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    CodeComponent disableNumberButtons
      Code Type = Py
      Each Frame:
                    if gotValidClick:
                        mouseClickOnNumber.status = FINISHED
                        if number1.name != mouseClickOnNumber.clicked_name[-1]: number1.opacity = 0.2
                        if number2.name != mouseClickOnNumber.clicked_name[-1]: number2.opacity = 0.2
                        if number3.name != mouseClickOnNumber.clicked_name[-1]: number3.opacity = 0.2
                        if number4.name != mouseClickOnNumber.clicked_name[-1]: number4.opacity = 0.2
                      #  continueRoutine = True
    CodeComponent evaluateResponses
      Code Type = Py
      End Routine:
        #evaluate correctness of response and write into a new column TRUE, FALSE, or NO_ANSW
        if len(mouseClickOnCall.clicked_name) > 0:
            currentLoop.addData('callSignCorrect', mapCallSign[mouseClickOnCall.clicked_name[0]] == callSign)
            print(mapCallSign[mouseClickOnCall.clicked_name[0]])
        else:
            currentLoop.addData('callSignCorrect', "NO_ANSW")
        if len(mouseClickOnColour.clicked_name) > 0:
            currentLoop.addData('colourCorrect', mapColour[mouseClickOnColour.clicked_name[0]] == colour)
            print(mapColour[mouseClickOnColour.clicked_name[0]])
        else:
            currentLoop.addData('colourCorrect', "NO_ANSW")
        if len(mouseClickOnNumber.clicked_name) > 0:
            currentLoop.addData('numberCorrect', mapNumber[mouseClickOnNumber.clicked_name[0]] == number)
            print(mapNumber[mouseClickOnNumber.clicked_name[0]])
        else:
            currentLoop.addData('numberCorrect', "NO_ANSW")
    CodeComponent saveAfterEachTrial
      Code Type = Py
      End Routine:
        #sicherIstSicher
        #thisExp.saveAsWideText(filename+'.csv')
        #logging.flush()
    ImageComponent blankScreenAfterResponse
      image = images/blankScreen.png
      size = [1920, 1080]
      startVal [condition] = $mouseClickOnNumber.status==FINISHED
      stopVal [duration (s)] = 0.6
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  Routine startBlock
    TextComponent blockStart
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Begin  block 
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instrTraining
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $orderFile
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine startBlock
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine audioTrial
      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine thanks
