PsychoPy2experiment version="2022.1.3"
Settings
  Audio lib = pyo
  Experiment info = {'participant': 's00', 'order': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = SentenceInNoise
  keyboardBackend = ioHub
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Routines
  Routine instrTraining
    CodeComponent preparations
      Code Type = Auto->JS
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      Before Experiment:
        #import psychtoolbox as ptb
        from psychopy import sound
        import psychopy.visual
        import psychopy.event
        import psychopy.core
        prefs.hardware['audioLib'] = 'pyo'

        clock = psychopy.core.Clock()
        print('TIME O_o')
        print(clock.getTime())
      Begin Experiment:
        #if (SubjectNumber % 2 == 0):
        #    Order=ABCD
        #else:
        #    Order=CDBA
    TextComponent instrTrainText
      letterHeight = 0.04
      startVal [frame N] = 0
      text = Quick and dirty timing test
      wrapWidth = 1
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent hideMouse
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine exposure
    SoundComponent originalSentence
      sound [set every repeat] = $audioFile
      startVal [frame N] = 0.0
      syncScreenRefresh = False
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    ImageComponent waitAfterSound
      image = images/grayScreen.png
      size = (2, 2)
      startVal [condition] = $originalSentence.status==FINISHED
      stopVal [duration (s)] = 1.0
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  Routine audioTrial
    SoundComponent sound_1
      sound [set every repeat] = $audiofile
      startVal [frame N] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Trigger
        myClock = core.Clock()
        now = myClock.getTime()

        # Trigger times
        pp_start_time = now # + ptb.GetSecs()

        # Some runner prints for testing
        print('<<<< now')
        print(now)

         #
    PolygonComponent fixation
      fillColor = white
      lineWidth = 0.5
      opacity = 0.75
      shape = cross
      size = (0.05, 0.05)
      startVal [frame N] = 0
      stopVal [condition] = $sound_1.status==FINISHED
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    CodeComponent hideMouse_2
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
    ImageComponent screenAfterAudio
      image = images/grayScreen.png
      size = (0.5, 0.5)
      startVal [frame N] = $fixation.status==FINISHED  
      stopVal [time (s)] = 2 
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    ParallelOutComponent pp_start
      address = 0x3FE8
      register = EIO
      startData = 1
      startVal [condition] = $pp_start_time
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent pp_start_2
      address = 0x3FE8
      register = EIO
      startData = 108
      startVal [time (s)] = $pp_start_time/1000 + 0.08
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = True
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  Routine startBlock
    TextComponent blockStart
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Begin  block 
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instrTraining
  Routine startBlock
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Sequence.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'},
      {'audiofile': 'audio/click_beep.wav'}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
    Routine audioTrial
  LoopTerminator trials
