PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '1', 'session': '001'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [1280, 720]
  expName = eeg_contingent_digits
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Routines
  Routine digits_played
    CodeComponent code
      Code Type = Py
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      Begin Routine:
        if NV == 1 and SiN == 0:
            # Start replaying background noise because it was stopped in the NV speech task
            # Elsas code: sd.play(sound_noise, fs, loop=True)

            sound_noise.stop()
      Each Frame:
        if use_lpt:
            if sound_digit1.status == STARTED:
                port.setData(12)
            elif sound_digit2.status == STARTED:
                port.setData(22)
            elif sound_digit3.status == STARTED:
                port.setData(32)
      End Routine:
        if NV == 1 and SiN == 0:
            # Start replaying background noise because it was stopped in the NV speech task
            # Elsas code: sd.play(sound_noise, fs, loop=True)

            sound_noise.play()
    SoundComponent sound_digit1
      sound [set every repeat] = $digit1
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    SoundComponent sound_digit2
      sound [set every repeat] = $digit2
      startVal [condition] = $sound_digit1.status == FINISHED
      syncScreenRefresh = False
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    SoundComponent sound_digit3
      sound [set every repeat] = $digit3
      startVal [condition] = $sound_digit2.status == FINISHED
      syncScreenRefresh = False
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  Routine Calibrating
    CodeComponent Code_calibration
      Code Type = Py
      Begin Routine:
        # In this routine, the alpha ratios of the subject will be recorded during the
        # so-called "calibration phase". Once collected, the mean and std will be calculated.
        # At the end of the routine, the individual factor for the threshold will be estimated:
        # Threshold = mean_ratio_calibration + estimated_indiv_factor * std_ratio_calibration

        # set EEG marker for calibration
        if use_lpt:
            port.setData(91)

        # Start playing background noise
        sound_noise.play()

        # Default values for signal processing and mean and std calculation
        signal = 0
        blue_elecs = 0
        red_elecs = 0
        ratio_elecs = 0
        count = 0
        ratio_vec_rs = 0
        ratio_vec_mean = 0
        ratio_vec_std = 0

        # Default values for calculating individualized threshold
        nFound_triggers = 0
        current_factor = max_factor
        diff_vector = []
        triggers = []
        first_trigger = []
        rest_triggers = []
        def_triggers = []
        indiv_factor = 0
        counter = 0
      Each Frame:
        # pull chunks from the EEG stream (see startup)
        chunk, timestamps = inlet_EEG.pull_chunk()
        chunks_frame = [i[0:32] for i in chunk] # select the 32 elecs of interest

        # calculate the alpha ratios of the incoming signal. Blue elecs and red elecs are
        # chosen from the topomap of TH's results.
        if chunks_frame:
            signal = chunks_frame
            # just select the elecs of interest and average them
            blue_elecs = np.average([signal[0][Fz], signal[0][F8], signal[0][FT10], signal[0][O1]])
            red_elecs = np.average([signal[0][C3], signal[0][CP1]])
            # build the ratio between these 2 clusters
            ratio_elecs = red_elecs - blue_elecs
            sys.stdout = dataCalibration_file # open file for saving ratios during calibration
            print(timestamps, ratio_elecs) # saving ratios during calibration

        # actualize count of frame
        count += 1

        # vector gathering ratios of each frame
        ratio_vec_rs = np.append(ratio_vec_rs, ratio_elecs)

        # once calibration is over, calculates the mean and std of alpha ratio gathered
        # during the calibration
        if count == baseline_duration_frames: # once vector is 100 sec long, get the mean and std
            sys.stdout = sys.__stdout__ # close the data calibration file
            ratio_vec_mean = np.average(ratio_vec_rs) # mean of the 100 seconds calibration
            ratio_vec_std = np.std(ratio_vec_rs) # std of the 100 seconds calibration
            sys.stdout = meanstd_file # open file for saving std and mean
            print(ratio_vec_mean) # saving mean
            print(ratio_vec_std) # saving std
            sys.stdout = sys.__stdout__ # close std and mean file
            # print mean and std in the console to check the values
            print('mean = ', ratio_vec_mean)
            print('std = ', ratio_vec_std)
      End Routine:
        # Stop the background noise
        sound_noise.stop()

        # find the individual factor of the current subject
        ratio_vec_rs = np.array(ratio_vec_rs) # convert baseline signal as array

        # to find the individual factor, we start from the greatest acceptable factor
        # and check how many triggers we find for each factor. Once the number of
        # found triggers is greater or equal than the number estimated in "startup",
        # we get the previous factor in the while loop,
        # which is greater than the current one (if found_trigger == 10 for a current_factor == 2.5,
        # we will take the factor of the preceding iteration, that is, 2.6).
        # If the current_factor is smaller than the lowest acceptable factor, we have to
        # exclude the current subject.
        # Properties: We do not save consecutive triggers lasting as long as the ITI (2 sec). If
        # the length of consecutive triggers is greater than the ITI (in sample count), we
        # save 2 triggers out of this vector: the first one and the nth sample exceeding the ITI.

        while nFound_triggers < nTrigger_Baseline and current_factor > 0:
            # find the indices of the calibration samples which are reaching the current threshold
            triggers = np.where(ratio_vec_rs > ratio_vec_mean + current_factor*ratio_vec_std)
            sys.stdout = allTriggers_baseline # open file for all found triggers during calibration
            print(current_factor, triggers[0])
            sys.stdout = sys.__stdout__ # close file for all found triggers during calibration

            # if there is only 1 trigger found, save it in the definitive trigger vector:
            if len(triggers[0]) == 1:
                def_triggers = triggers[0][0]

            # if there is more than 1 trigger found, do the later
            elif len(triggers[0]) > 1:
                # get the first trigger
                first_trigger = triggers[0][0]
                # the rest of the triggers are saved separately to check for the difference
                # between the first and the other triggers later.
                rest_triggers = triggers[0][1:]

                # check for consecutive samples
                counter = 0
                for x in rest_triggers:
                    # check distance between first trigger and next
                    # if not sufficiently large ...
                    if not (np.diff([first_trigger,x]) > min_ITI_samples):
                        # ... then delete second trigger, go on
                        rest_triggers= np.delete(rest_triggers, counter)
                    else: # if distance ok:
                        # move on with checking distance from next trigger and keep the
                        # value in the vector
                        first_trigger = rest_triggers[counter]
                        # increase counter
                        counter +=1

                # once the loop is done, write a definitive trigger vector with all triggers
                # there:
                def_triggers = rest_triggers
                # prepend first trigger to result (because it was not there)
                def_triggers = np.insert(def_triggers, 0, triggers[0][0], axis=0)
                print(current_factor, "definitive triggers:", def_triggers)

            # get the number of definitive found triggers
            nFound_triggers = len(def_triggers)
            print(current_factor, "number of definitive triggers:", nFound_triggers)
            current_factor -= step_factor
            current_factor = round(current_factor,1)

        if current_factor > 0:
            # get the factor of the preceding iteration
            indiv_factor = round(current_factor+step_factor, 1)
            #indiv_factor = current_factor
            sys.stdout = indiv_factor_file # open file for saving individualized factor
            print(indiv_factor)
            sys.stdout = sys.__stdout__ # close individualized factor file

            # Once the loop is over, check the reason why this loop stops:
            # 1) the current factor is smaller than the minimum acceptable factor or
            # 2) if the number or found triggers is greater than the number estimated in "startup".

            if indiv_factor < min_factor: # check for 1)
                print("The individualized factor of this subject is equal to", indiv_factor, "which is smaller than the smallest acceptable factor", min_factor) # exclude the subject
            else: # check for 2)
                print("indiv factor = ", indiv_factor)

        else: # if current_factor =< 0
            print("No positive trigger could be found for this person: too much triggers needed in short time")

        # print current thresh of subject:
        print('thresh =', ratio_vec_mean + int(indiv_factor) * ratio_vec_std)
    TextComponent Fixation_cross
      color = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = baseline_duration_sec
      text = +
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  Routine Response_subjects
    CodeComponent code_resp_keys
      Code Type = Py
      Begin Routine:
        # In this routine, the reponse of the subject are saved.
        # The subjects have to type the 3 digits separately (one per screen) and confirm
        # their end choice by pressing enter: digit 1 - ENTER - digit 2 - ENTER - digit 3 - ENTER
        # Output: Excel file in the data folder of PsychoPy. Note that every key pressed
        # are saved in this output file. The actual response of the subject is the reponse
        # just before the "enter" keypress

        count = 0
        response = ''
        theseKeys3 = []
        keyPress = []
        response_string = []

        sound_noise.play()
      Each Frame:
        # Collect every pressed key
        keyPress = event.getKeys(keyList=['num_1','num_2','num_3','num_4','num_5','num_6', 'num_7', 'num_8','num_9','num_0', 'return'])
        # Gather the pressed key in a string vector
        response_string = "".join(key_resp.keys).replace('num_', '')

        if response_string: # if response_string is not empty:
            # only disp the last pressed key to enable the subjects to do corrections
            # (their final response is the last keypress before "enter")
            response = response_string[-1]

        response_text_exp = "Gehörte Ziffer: {}".format(response)

        if "return" in keyPress: # if "enter" key pressed
            continueRoutine = False # pass to the next iteration (digit)
      End Routine:
        # set EEG marker after each digit response
        if use_lpt:
            if response_exp.thisN == 0:
                port.setData(42)
            elif response_exp.thisN == 1:
                port.setData(52)
            elif response_exp.thisN == 2:
                port.setData(62)
    KeyboardComponent key_resp
      allowedKeys = 'num_0','num_1', 'num_2', 'num_3', 'num_4', 'num_5', 'num_6', 'num_7', 'num_8', 'num_9', 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
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    TextComponent disp_answer
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $response_text_exp
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  Routine signal_check
    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        # Default values for normalizing the signal
        signal_trials = []
        trial_nr = []

        # Default color values
        ratio_vec = 0
        current_mean_ratio = 0

        # block and trial counter
        nExpBlock = 1
        nExpTrials = 0


        #default variables for digit playback
        firstdigit = 0
        seconddigit = 0
        thirddigit = 0
        noise = [100,60,50,60,30,45,25,20,85]
        speaker = [1,7,10,13,14,21,33,48,49,61]
        digit1 = 'NVS_Speaker_1_digit_0_100_envExtDepPt.wav_48kHz_filtered_mono'
        digit2 = 'NVS_Speaker_1_digit_0_100_envExtDepPt.wav_48kHz_filtered_mono'
        digit3 = 'NVS_Speaker_1_digit_0_100_envExtDepPt.wav_48kHz_filtered_mono'

        ITI = 120 #set the iter trial interval at 2s (60 frames per second: 2 seconds = 120 frames)

        # default ITI
        ctrl_ITI = ITI
      Begin Routine:
        # In this routine, we check the ongoing alpha ratio of the subject. If an alpha
        # ratio sample is greater than the threshold, the stimuli are triggered.
        # Threshold = mean_ratio_calibration + estimated_indiv_factor * std_ratio_calibration

        # set EEG marker for calibration
        if use_lpt:
            port.setData(92)



        #continueRoutine = True
        count = 0
        disp = 0
        signal_current_trial = np.array([])

        #trigger1 = time.time() # get timestamp as seconds
        #trigger2 = 0

        # Define the subset of stimuli to play depending on block 1 or block 2:
        # block 1: Trials 1 to 70
        # block 2: Trials 71 to 140
        # The last entry of the slice is not being included, so the last included will be (nTrials_half - 1).
        # This is what we need because we want it to be (nTrials_half-1) because of the Python indexing starting from 0
        trial_nr = slice(0, nTrials_half)
        if nExpBlock == 2:
            trial_nr = slice(nTrials_half, nTrials)

        #print(nExpBlock, nExpTrials, trial_nr)

        # Define the current task to play: NV speech or SiN
        t_trial_start = time.time()
        NV = []
        SiN = []
        if order_task_trial[nExpTrials] == 0:
            NV = 1
            SiN = 0
        else:
            NV = 0
            SiN = 1

        # need to move parts from digits_played to here to start preparing things!
        # In this routine, the triplets are presented once the threshold
        # was reached in the previous routine. If NV speech or SiN is presented
        # depends on the random trial order defined in startup.
        # Maybe we could find a way to buffer the audio files in order to decrease the
        # delay.

        # Randomly choose one speaker for the current trial
        rand_speaker = np.random.choice(speaker, size = 1)
        rand_speaker = int(rand_speaker[0])

        jitter = np.random.uniform(-1,0,1) * refresh_rate

        # set upper bound for control condition ITI to be 5 seconds +/- 1
        if ctrl_ITI > 600:
            ctrl_ITI = 300

        #print(rand_speaker)

        # Defining the current digits
        firstdigit = int(NFB_digit1)
        seconddigit = int(NFB_digit2)
        thirddigit = int(NFB_digit3)

        if NV == 1 and SiN == 0:

            # Stop the background noise: For NV speech, we don't want any background noise
            # during stimulus presentation
            #sound_noise.stop()

            # Playing the first digit
            if firstdigit < 8:
                digit1 = 'NVS_4CHS_Speaker'+str(rand_speaker)+'_Digit'+str(firstdigit)+'_'+str(noise[firstdigit])+'ptEnv_48kHz_filtered_mono.wav'
            else: # here we have to change the index since there is no 7 in the stimuli
                digit1 = 'NVS_4CHS_Speaker'+str(rand_speaker)+'_Digit'+str(firstdigit)+'_'+str(noise[firstdigit-1])+'ptEnv_48kHz_filtered_mono.wav'

            # Playing the second digit
            if seconddigit < 8:
                digit2 = 'NVS_4CHS_Speaker'+str(rand_speaker)+'_Digit'+str(seconddigit)+'_'+str(noise[seconddigit])+'ptEnv_48kHz_filtered_mono.wav'
            else: # here we have to change the index since there is no 7 in the stimuli
                digit2 = 'NVS_4CHS_Speaker'+str(rand_speaker)+'_Digit'+str(seconddigit)+'_'+str(noise[seconddigit-1])+'ptEnv_48kHz_filtered_mono.wav'

            # Playing the third digit
            if thirddigit < 8:
                digit3 = 'NVS_4CHS_Speaker'+str(rand_speaker)+'_Digit'+str(thirddigit)+'_'+str(noise[thirddigit])+'ptEnv_48kHz_filtered_mono.wav'
            else: # here we have to change the index since there is no 7 in the stimuli
                digit3 = 'NVS_4CHS_Speaker'+str(rand_speaker)+'_Digit'+str(thirddigit)+'_'+str(noise[thirddigit-1])+'ptEnv_48kHz_filtered_mono.wav'


        elif NV == 0 and SiN == 1:

            # Playing the first digit
            if firstdigit < 8:
                digit1 = 'Speaker'+str(rand_speaker)+'_Digit'+str(firstdigit)+'_48kHz_filtered_mono.wav'
            else: # here we have to change the index since there is no 7 in the stimuli
                digit1 = 'Speaker'+str(rand_speaker)+'_Digit'+str(firstdigit)+'_48kHz_filtered_mono.wav'

            # Playing the second digit
            if seconddigit < 8:
                digit2 = 'Speaker'+str(rand_speaker)+'_Digit'+str(seconddigit)+'_48kHz_filtered_mono.wav'
            else: # here we have to change the index since there is no 7 in the stimuli
                digit2 = 'Speaker'+str(rand_speaker)+'_Digit'+str(seconddigit)+'_48kHz_filtered_mono.wav'

            # Playing the third digit
            if thirddigit < 8:
                digit3 = 'Speaker'+str(rand_speaker)+'_Digit'+str(thirddigit)+'_48kHz_filtered_mono.wav'
            else: # here we have to change the index since there is no 7 in the stimuli
                digit3 = 'Speaker'+str(rand_speaker)+'_Digit'+str(thirddigit)+'_48kHz_filtered_mono.wav'






        # shall we try to prepare sounds here?

        sound_digit1 = sound.Sound(digit1, preBuffer= -1)
        sound_digit2 = sound.Sound(digit2, preBuffer= -1)
        sound_digit3 = sound.Sound(digit3, preBuffer= -1)

        # default condition (first trial) is trigger condition!
        trial_trig = True

        # overwrite individual factor, set to 1 SD
        if use_debug:
            indiv_factor = 1
            ratio_vec_mean = 0
            ratio_vec_std = 0.5


        # Start playing background noise
        sound_noise.play()
      Each Frame:
        # actualize count of frame
        count += 1

        # pull chunks from the EEG stream
        chunk, timestamps = inlet_EEG.pull_chunk()
        chunks_frame = [i[0:32] for i in chunk] # select the 32 elecs of interest

        # calculate the alpha ratios of the incoming signal. Blue elecs and red elecs are
        # chosen from the topomap of TH's results.
        if chunks_frame:
            signal = chunks_frame
            # just select the elecs of interest and average them
            #blue_elecs = np.average([signal[0][Fz], signal[0][F8], signal[0][FT10], signal[0][O1]])
            #red_elecs = np.average([signal[0][C3], signal[0][CP1]])
            blue_elecs = np.average([signal[0][CP2], signal[0][Oz], signal[0][FT9], signal[0][FP1],signal[0][FP2]])
            red_elecs = np.average([signal[0][T7], signal[0][TP9], signal[0][P7], signal[0][CP5], signal[0][P3],signal[0][T8], signal[0][TP10]])

            # build the ratio between these 2 clusters
            ratio_elecs = red_elecs - blue_elecs
            sys.stdout = dataSignalCheck_file # open Signal check file to save ratios during signal check
            #print("data_signalCheck")
            print(timestamps, ratio_elecs)

        # vector gathering signal for subsequent control condition
        signal_current_trial = np.append(signal_current_trial, ratio_elecs)

        if count > ITI: # wait for 2 seconds (ITI) before checking if the threshold is reached
            #if use_debug: # if in debug mode, stimulate every 2 seconds
            #    sys.stdout = sys.__stdout__ # close signal check file
            #    continueRoutine = False # ends the current routine
            # in trigger condition: check whether ratio larger than threshold
            if trial_trig:
                if ratio_elecs > ratio_vec_mean + int(indiv_factor) * ratio_vec_std: # if threshold is reached, current routine ends and stimuli are delivered
                #if ratio_elecs == ratio_elecs:
                    sys.stdout = sys.__stdout__ # close signal check file
                    # at which time have we triggered?
                    # we need count variable + ITI
                    #trigger2 = time.time()
                    t_trial_trig = time.time()

                    # should be in seconds - this is for the next untriggered stimulation
                    ctrl_ITI = (t_trial_trig - t_trial_start) * refresh_rate
                    # toggle trial condition
                    trial_trig = False
                    continueRoutine = False # ends the current routine
            # in control condition: check when enough time has passed
            else:
                if count > ctrl_ITI + jitter: # if threshold is reached, current routine ends and stimuli are delivered
                    #if ratio_elecs == ratio_elecs:
                    sys.stdout = sys.__stdout__ # close signal check file
                    #trigger2 = time.time()
                    # toggle trial condition
                    trial_trig = True
                    continueRoutine = False # ends the current routine
      End Routine:
        # save signal of the current trial in a list for control condition
        # it will then be used to determine the duration it took to trigger the stimuli
        # for each trial.
        signal_trials.append(signal_current_trial)

        #sys.stdout = MarkerExp
        #print(trigger1, trigger2)
        #sys.stdout = sys.__stdout__
    TextComponent Fixation
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text = +
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $ratio_elecs
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    TextComponent text_2
      letterHeight = 0.1
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every frame] = $indiv_factor
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    TextComponent text_7
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $ratio_vec_mean
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    TextComponent text_8
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $ratio_vec_std
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  Routine signal_check_2
    CodeComponent code_3
      Code Type = Py
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      Begin Experiment:
        # Setting up the replay of ITI of the experimental condition.
        # Once ITI is replayed, the digits are presented. Thus, we trigger without
        # checking at the subject's alpha ratio

        # block and trial counter
        nCtrlBlock = 1
        nCtrlTrials = 0
        trial_nr_ctrl = []
      Begin Routine:
        # set EEG marker for calibration
        if use_lpt:
            port.setData(93)

        # Set default values
        count_frames = 0
        disp = 0

        #trigger1 = time.time() # get timestamp as seconds
        #trigger2 = 0


        # Define the subset of stimuli to play depending on block 1 or block 2:
        # block 1: Trials 1 to 70
        # block 2: Trials 71 to 140
        # The last entry of the slice is not being included, so the last included will be (nTrials_half - 1).
        # This is what we need because we want it to be (nTrials_half-1) because of the Python indexing starting from 0
        trial_nr_ctrl = slice(0, nTrials_half)
        if nCtrlBlock == 2:
            trial_nr_ctrl = slice(nTrials_half, nTrials)

        #print(nCtrlBlock, nCtrlTrials, trial_nr_ctrl)

        # Define the current task to play: NV speech or SiN
        NV = []
        SiN = []
        if order_task_trial[nCtrlTrials] == 0:
            NV = 1
            SiN = 0
        else:
            NV = 0
            SiN = 1



        # need to move parts from digits_played to here to start preparing things!
        # In this routine, the triplets are presented once the threshold
        # was reached in the previous routine. If NV speech or SiN is presented
        # depends on the random trial order defined in startup.
        # Maybe we could find a way to buffer the audio files in order to decrease the
        # delay.

        # Randomly choose one speaker for the current trial
        rand_speaker = np.random.choice(speaker, size = 1)
        rand_speaker = int(rand_speaker[0])
        #print(rand_speaker)

        # Defining the current digits
        firstdigit = int(NFB_digit1)
        seconddigit = int(NFB_digit2)
        thirddigit = int(NFB_digit3)

        if NV == 1 and SiN == 0:

            # Stop the background noise: For NV speech, we don't want any background noise
            # during stimulus presentation
            #sound_noise.stop()

            # Playing the first digit
            if firstdigit < 8:
                digit1 = 'NVS_4CHS_Speaker'+str(rand_speaker)+'_Digit'+str(firstdigit)+'_'+str(noise[firstdigit])+'ptEnv_48kHz_filtered_mono.wav'
            else: # here we have to change the index since there is no 7 in the stimuli
                digit1 = 'NVS_4CHS_Speaker'+str(rand_speaker)+'_Digit'+str(firstdigit)+'_'+str(noise[firstdigit-1])+'ptEnv_48kHz_filtered_mono.wav'

            # Playing the second digit
            if seconddigit < 8:
                digit2 = 'NVS_4CHS_Speaker'+str(rand_speaker)+'_Digit'+str(seconddigit)+'_'+str(noise[seconddigit])+'ptEnv_48kHz_filtered_mono.wav'
            else: # here we have to change the index since there is no 7 in the stimuli
                digit2 = 'NVS_4CHS_Speaker'+str(rand_speaker)+'_Digit'+str(seconddigit)+'_'+str(noise[seconddigit-1])+'ptEnv_48kHz_filtered_mono.wav'

            # Playing the third digit
            if thirddigit < 8:
                digit3 = 'NVS_4CHS_Speaker'+str(rand_speaker)+'_Digit'+str(thirddigit)+'_'+str(noise[thirddigit])+'ptEnv_48kHz_filtered_mono.wav'
            else: # here we have to change the index since there is no 7 in the stimuli
                digit3 = 'NVS_4CHS_Speaker'+str(rand_speaker)+'_Digit'+str(thirddigit)+'_'+str(noise[thirddigit-1])+'ptEnv_48kHz_filtered_mono.wav'


        elif NV == 0 and SiN == 1:

            # Playing the first digit
            if firstdigit < 8:
                digit1 = 'Speaker'+str(rand_speaker)+'_Digit'+str(firstdigit)+'_48kHz_filtered_mono.wav'
            else: # here we have to change the index since there is no 7 in the stimuli
                digit1 = 'Speaker'+str(rand_speaker)+'_Digit'+str(firstdigit)+'_48kHz_filtered_mono.wav'

            # Playing the second digit
            if seconddigit < 8:
                digit2 = 'Speaker'+str(rand_speaker)+'_Digit'+str(seconddigit)+'_48kHz_filtered_mono.wav'
            else: # here we have to change the index since there is no 7 in the stimuli
                digit2 = 'Speaker'+str(rand_speaker)+'_Digit'+str(seconddigit)+'_48kHz_filtered_mono.wav'

            # Playing the third digit
            if thirddigit < 8:
                digit3 = 'Speaker'+str(rand_speaker)+'_Digit'+str(thirddigit)+'_48kHz_filtered_mono.wav'
            else: # here we have to change the index since there is no 7 in the stimuli
                digit3 = 'Speaker'+str(rand_speaker)+'_Digit'+str(thirddigit)+'_48kHz_filtered_mono.wav'






        # shall we try to prepare sounds here?
        sound_digit1_2 = sound.Sound(digit1, preBuffer= -1)
        sound_digit2_2 = sound.Sound(digit2, preBuffer= -1)
        sound_digit3_2 = sound.Sound(digit3, preBuffer= -1)

        # Start playing background noise
        sound_noise.play()
      Each Frame:
        # actualize count of frame
        count_frames += 1

        # pull chunks from the previously resolved EEG stream (see startup)
        chunk, timestamps = inlet_EEG.pull_chunk()
        chunks_frame = [i[0:32] for i in chunk] # select the 32 elecs of interest

        # processing the incoming signal to build the ratio
        if chunks_frame:
            signal = chunks_frame
            # just select the elecs of interest and average them
            blue_elecs = np.average([signal[0][CP2], signal[0][Oz], signal[0][FT9], signal[0][FP1],signal[0][FP2]])
            red_elecs = np.average([signal[0][T7], signal[0][TP9], signal[0][P7], signal[0][CP5], signal[0][P3],signal[0][T8], signal[0][TP10]])


            ratio_elecs = red_elecs - blue_elecs
            sys.stdout = dataControl_file # open file for saving ratios during control triggering
            #print("SignalCheck2")
            print(timestamps, ratio_elecs)

        # dont use the current ratios and just stop the current routine when the replay of ITI is over
        if count_frames > len(signal_trials[nCtrlTrials]):
            sys.stdout = sys.__stdout__ # close control triggering file
            #trigger2 = time.time()
            continueRoutine = False
      End Routine:
        #sys.stdout = MarkerControl
        #print(trigger1, trigger2)
        #sys.stdout = sys.__stdout__
    TextComponent Fixation_2
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text = +
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  Routine digits_played_2
    CodeComponent code_4
      Code Type = Py
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      Begin Experiment:
        #default variables
        #firstdigit = 0
        #seconddigit = 0
        #thirddigit = 0
        #noise = [100,60,50,60,30,45,25,20,85]
        #speaker = [1,7,10,13,14,21,33,48,49,61]
        #digit1 = 'NVS_Speaker_1_digit_0_100_envExtDepPt.wav_48kHz_filtered_mono.wav'
        #digit2 = 'NVS_Speaker_1_digit_0_100_envExtDepPt.wav_48kHz_filtered_mono.wav'
        #digit3 = 'NVS_Speaker_1_digit_0_100_envExtDepPt.wav_48kHz_filtered_mono.wav'
      Begin Routine:
        # In this routine, the triplets are presented once the threshold
        # was reached in the previous routine. If NV speech or SiN is presented
        # depends on the random trial order defined in startup.
        # Maybe we could find a way to buffer the audio files in order to decrease the
        # delay.

        # now we only play stimuli here, nothing else
        # first we send triggers with lpt, should not take long,
        # then play digits, should be more precise

        if NV == 1 and SiN == 0:

            # Stop the background noise: For NV speech, we don't want any background noise
            # during stimulus presentation
            sound_noise.stop()
      Each Frame:
        if use_lpt:
            if sound_digit1_2.status == STARTED:
                port.setData(13)
            elif sound_digit2_2.status == STARTED:
                port.setData(23)
            elif sound_digit3_2.status == STARTED:
                port.setData(33)
      End Routine:
        #if NV == 1 and SiN == 0:
        #    # Start replaying background noise because it was stopped in the NV speech task
        #    sound_noise.play()
    SoundComponent sound_digit1_2
      sound [set every repeat] = $digit1
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    SoundComponent sound_digit2_2
      sound [set every repeat] = $digit2
      startVal [condition] = $sound_digit1_2.status == FINISHED
      syncScreenRefresh = False
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    SoundComponent sound_digit3_2
      sound [set every repeat] = $digit3
      startVal [condition] = $sound_digit2_2.status == FINISHED
      syncScreenRefresh = False
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  Routine Response_subjects_2
    CodeComponent code_resp_keys_3
      Code Type = Py
      Begin Routine:
        count = 0
        response2 = ''
        keyPress2 = []
        response_string2 = []

        sound_noise.play()
      Each Frame:
        # Collect every pressed key
        keyPress2 = event.getKeys(keyList=['num_1','num_2','num_3','num_4','num_5','num_6', 'num_7', 'num_8','num_9','num_0', 'return'])
        # Gather the pressed key in a string vector
        response_string2 = "".join(key_resp_2.keys).replace('num_', '')

        if response_string2: # if response_string is not empty:
            response2 = response_string2[-1] # disp the last pressed key

        response_text_ctrl = "Gehörte Ziffer {}".format(response2)

        if "return" in keyPress2: # if "enter" key pressed
            continueRoutine = False # pass to the next iteration
      End Routine:
        # set EEG marker after each digit response
        if use_lpt:
            if response_ctrl.thisN == 0:
                port.setData(43)
            elif response_ctrl.thisN == 1:
                port.setData(53)
            elif response_ctrl.thisN == 2:
                port.setData(63)
    KeyboardComponent key_resp_2
      allowedKeys = 'num_0','num_1', 'num_2', 'num_3', 'num_4', 'num_5', 'num_6', 'num_7', 'num_8', 'num_9', 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
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    TextComponent disp_answer_2
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $response_text_ctrl
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  Routine Startup
    CodeComponent code_5
      Code Type = Py
      Begin Experiment:
        # This routine prepares the needed elements for the functioning of the experiment.
        # It also randomly generates the digit triplet for the experiment (see begin
        # routine) and the randomized order of SiN vs NV speech presentation (see end
        # routine).
        # if you want to change some experiment settings (such as nTrial, duration of the
        # calibration etc.), you can do it here

        # import packages---------------------------------------------------------------

        import psychtoolbox as ptb
        from pylsl import StreamInlet, resolve_stream
        from psychopy import parallel, sound
        import numpy as np
        import scipy.stats as stats
        import sys
        import time
        import random
        import xlsxwriter
        #import sounddevice as sd
        #import soundfile as sf
        from itertools import groupby



        # some init and debug parameters
        use_debug = True
        if use_debug:
            use_lpt = False
            use_real_EEG = True
            tresh_factor = 1.5
        else:
            use_lpt = False
            use_real_EEG = True
            tresh_factor = []


        # open output files-------------------------------------------------------------


        dataCalibration_file = open("dataCalibration2.txt", "w") # alpha ratio during calibration
        meanstd_file = open("meanStd2.txt", "w") # mean and std of the calibration
        allTriggers_baseline = open("allTriggers_baseline2.txt", "w") # all found triggers for each tested factor during calibration
        indiv_factor_file = open("indivFactor2.txt", "w") # individual factor estimated during calibration for the current subject
        dataSignalCheck_file = open("dataSignalCheck2.txt", "w") # alpha ratio during signal check (experimental condition)
        StimOrder_file = open("StimOrder2.txt", "w") # order of the trials (is currently SiN or NV speech?)
        dataControl_file = open("dataControl2.txt", "w") # alpha ratio during signal check (control condition)


        # get the EEG stream from OpenVibe----------------------------------------------


        print("looking for streams...")
        streams_EEG = resolve_stream('type', 'EEG_extracted')
        inlet_EEG = StreamInlet(streams_EEG[0]) # create new inlets to read from the streams

        if use_lpt:
            port = parallel.ParallelPort(address=0xDFF8) # open the parallel port for EEG markers
            port.setData(0) # 0 as marker for begin exp


        # set triggers------------------------------------------------------------------


        # The logic of the EEG markers is the following:
        # The last number always indicate the current condition:
        # ..... 9: start experiment
        # ..... 0: practice trials
        # ..... 1: calibration phase
        # ..... 2: experimental condition
        # ..... 3: control condition
        # The first number always indicate the type of event
        # ..... 10: instructions
        # ..... 9: signal check (the time needed to trigger)
        # ..... 1,2 or 3: for 1st, 2nd or 3rd presented digit (stimulus presentation)
        # ..... 4,5 or 6: for 1st, 2nd or 3rd typed digit (response of the subjects)

        #Examples:
        # ..... 101: marker of the instructions before the calibration phase
        # ..... 12: marker of the first presented digit during the experimental condition

        # The markers of the break between each block are as follow:
        # 1st number = 2
        # 2nd number = current block number
        # 3rd numner = current condition (see above)

        # Example:
        # ..... 212: marker of the first block in the experimental condition


        #index of electrodes------------------------------------------------------------
        # define the index of the elecs of interest for the current experiment
        #(actual index -1 because of 0 being the first elem in Python)

        FP1 = 1 -1
        Fz = 2 - 1
        F3 = 3 - 1
        F7 = 4 - 1
        FT9 = 5 -1
        FC5 = 6 - 1
        FC1 = 7 - 1
        C3 = 8 - 1
        T7 = 9 -1
        TP9 = 10 -1
        CP5 = 11 - 1
        CP1 = 12 - 1
        Pz = 13 - 1
        P3 = 14 -1
        P7 = 15 - 1
        O1 = 16 - 1
        Oz = 17 - 1
        O2 = 18 - 1
        P4 = 19 -1
        P8 = 20 -1
        TP10 = 21 -1
        CP6 = 22 -1
        CP2 = 23 -1
        Cz = 24 -1
        C4 = 25 -1
        T8 = 26 -1
        FT10 = 27 -1
        FC6 = 28 -1
        FC2 = 29 -1
        F4 = 30 -1
        F8 = 31 -1
        FP2 = 32 -1


        # Default settings for experiment-----------------------------------------------

        # the MAP configuration, which elecs are important



        nDigits = 3 # number presented digits in each trial
        if use_debug:
            nTrials_1Block = 16 # number of trials in each block, normal is 70
        else:
            nTrials_1Block = 70

        nTrials = nTrials_1Block * 2 # number of trials in each condition (experimental vs control), represents 2 blocks.
        refresh_rate = 60 # refreshing rate of the screen
        min_ITI = 2 # duration of minimal ITI (time during which we don't check if the threshold is reached to trigger the digits)
        srate_processed = 16 # sampling rate of the incoming signal

        # adapt calibration
        if use_debug:
            baseline_duration_sec = 5 # duration of baseline in seconds, normal is 100
        else:
            baseline_duration_sec = 100 # duration of baseline in seconds, normal is 100

        baseline_duration_frames = baseline_duration_sec * refresh_rate # duration of baseline in frames






        # Default setting for individualized factor calculation-------------------------

        min_factor = 2 # the minimal acceptable factor
        max_factor = 3.5 # the maximal acceptable factor
        step_factor = 0.1 # step size for testing the different factors
        max_duration100Trials_min = 20 # how many minutes should each block last
        max_duration100Trials_sec = max_duration100Trials_min * 60 # max minutes of each block converted in seconds
        min_ITI_samples = min_ITI*srate_processed # mean ITI converted in number of samples
        Interval = round(min_ITI * srate_processed) # how much sample points do we have to count to reach minimal ITI






        # Since we have to play nTrials_1Block in maximum max_duration100Trials_sec,
        # estimates the number of trigger we would have to find during the
        # calibration (aka baseline).
        interval_trigger_sec = max_duration100Trials_sec / nTrials_1Block # how many trigger should be found for each block
        nTrigger_Baseline = round(baseline_duration_sec / interval_trigger_sec) # how many triggers should be found during calibration
        #nTrigger_Baseline = 1


        # Stimuli ----------------------------------------------------------------------


        # Prepare file background noise
        #ELSA's code: sound_noise, fs = sf.read('constantNoise_1minute_16kHz_filtered_mono_looped.wav', dtype='float32')
        #sound_noise, fs = sf.read('constantNoise_1minute_16kHz_filtered_mono_looped.wav', dtype='float32')


        #sound_noise = sound.Sound('constantNoise_1minute_16kHz_filtered_mono_looped.wav')
        sound_noise = sound.Sound('constantNoise_1minute_48kHz_filtered_mono_looped.wav',loops = -1, preBuffer= -1)
      Begin Routine:
        # This chunk of code is generating random digit triplets for each trial and
        # each condition. The triplets are unique between trials
        # meaning that there is no repeated triplets within 1 condition.
        # Each triplet contains different digits: no repeated digits in one triplet.
        # However, the digits are not counterbalanced for each condition (experimental_SiN,
        # experimental_NV, control_SiN, control_NV)

        # Preparing variables
        nTrials_vector = np.arange(nTrials) # create the trial ID colomn: vector [0:nTrials]
        out_matrix = np.zeros((nTrials, nDigits)) # create the array template of size: rows = nTrials , columns = 3 (nDigits)
        labels_colomn = np.array(["TrialID","NFB_digit1","NFB_digit2","NFB_digit3"]) # define the labels of the columns for excel
        possible_digit = 10 # number of possible digits (with 7)
        exception_digit = 7 # digit to get rid off
        stimuli_digits = np.arange(possible_digit) # get a vector from 0 to 9 which are the possible digits (with 7)
        stimuli_digits = np.delete(stimuli_digits, exception_digit) # delete the digit 7 (not part of the stimuli)


        # GENERATING DIGITS FOR EXPERIMENTAL CONDITION----------------------------------


        # create the 3 digits randomly for each trial
        for x in nTrials_vector:
            # randomly choose the 3 digits from the possible stimuli without
            # remplacement (no identical digit in the same triplet)
            rand_digit = np.random.choice(stimuli_digits, size = nDigits, replace = False)
            out_matrix[x] = rand_digit

        # get the unique triplets to identify which triplets are repeated between trials
        unique_triplets, index_uniques, count_rep_triplets = np.unique(out_matrix, axis = 0, return_index=True, return_counts=True)

        # check if there is at least one row which is repeated (containing the same digits as another row)
        repeated_triplets = np.where(count_rep_triplets > 1) # a value > 1 means that the current row (triplet) is present more than once
        repeated_triplets = np.asarray(repeated_triplets[0]) # convert as array (more convenient)
        # get the index of the repeated triplets in the original matrix
        idx_repeated_triplets = index_uniques[repeated_triplets]

        # if at least 1 triplet repeated ...
        while len(idx_repeated_triplets) > 0:
            # choose random triplet again (without replacement to avoid identical digits in the triplet)
            out_matrix[idx_repeated_triplets[0]] = np.random.choice(stimuli_digits, size = nDigits, replace = False)
            # check again if there are some repeated triplets
            unique_triplets, index_uniques, count_rep_triplets = np.unique(out_matrix, axis = 0, return_index=True, return_counts=True)
            repeated_triplets = np.where(count_rep_triplets > 1)
            repeated_triplets = np.asarray(repeated_triplets[0])
            # get the index of the repeated triplets in the original matrix
            idx_repeated_triplets = index_uniques[repeated_triplets]
            #continue the loop until no repeated triplets anymore

        # once the stimulus set is done, insert the trial ID next to the triplet
        out_matrix = np.insert(out_matrix, 0, nTrials_vector, axis = 1)
        # insert labels of columns for PsychoPy to read conditions
        out_matrix_4xlsx = np.vstack((labels_colomn, out_matrix))

        # after vstack, the format of the triplets is not the one we want. It is a
        # 1 decimal string. We have to convert it in 0 decimal int.
        col = np.arange(nDigits+1)
        row = np.arange(nTrials+1)
        row = row [1:] # get rid of the first row since there are char strings
        for x in row:
            for i in col:
                out_matrix_4xlsx[x,i] = round(float(out_matrix_4xlsx[x,i]))

        # Preparing Excel files
        workbook = xlsxwriter.Workbook('Stimuli_exp_cond.xlsx')
        worksheet = workbook.add_worksheet()
        # Start from the first cell. Rows and columns are zero indexed.
        row = 0
        col = 0
        # Iterate over the data and write it out row by row.
        for ID_trial, digit1, digit2, digit3 in (out_matrix_4xlsx):
            worksheet.write(row, col, ID_trial)
            worksheet.write(row, col + 1, digit1)
            worksheet.write(row, col + 2, digit2)
            worksheet.write(row, col + 3, digit3)
            row += 1

        workbook.close()


        # GENERATING DIGITS FOR CONTROL CONDITION---------------------------------------
        # As stated above, there are the same contraints for the control condition.
        # Chunk of code commented: add the condition that the triplets should be different
        # across conditions (experimental vs control).
        # We drop this condition since it is never met with increased number of trials.


        # Preparing variables
        out_matrix_control = np.zeros((nTrials, nDigits))  # create the array template of size: rows = nTrials , columns = 3 (nDigits)
        elems_in_exp = [] # vector containing the information if current triplet is equal to one triplet in the experimental condition (logical)
        inBothMat = True

        # create the 3 digits randomly times the number of trials
        for x in nTrials_vector:
            # randomly choose the 3 digits from the possible stimuli vector without
            #remplacement (no identical digit in the same triplet)
            rand_digit = np.random.choice(stimuli_digits, size = nDigits, replace = False)
            out_matrix_control[x] = rand_digit

        # get the unique triplets to identify which triplets are repeated between trials
        unique_digits, index_uniques, count_rep_digits = np.unique(out_matrix_control, axis = 0, return_index=True, return_counts=True)

        # check if there is at least one row which is repeated (containing the same digits as another row)
        repeated_digits = np.where(count_rep_digits > 1) # a value > 1 means that the current row (triplet) is present more than once
        repeated_digits = np.asarray(repeated_digits[0]) # convert as array (more convenient)
        # get the index of the repeated digits in the original matrix
        idx_repeated_digits = index_uniques[repeated_digits]

        # if at least 1 repeated digit...
        while len(idx_repeated_digits) > 0:
            # choose random triplet again (without replacement)
            out_matrix_control[idx_repeated_digits[0]] = np.random.choice(stimuli_digits, size = nDigits, replace = False)
            # check again if there is repeated digits
            unique_digits, index_uniques, count_rep_digits = np.unique(out_matrix_control, axis = 0, return_index=True, return_counts=True)
            repeated_digits = np.where(count_rep_digits > 1)
            repeated_digits = np.asarray(repeated_digits[0])
            # get the index of the repeated digits in the original matrix
            idx_repeated_digits = index_uniques[repeated_digits]
            #continue the loop until no repeated digits anymore


        # THE CONDITION WE DECIDED TO GET RID OFF:
        # delete the TrialID column of the experimental condition matrix (easier for
        # comparison)
        #out_matrix = out_matrix[:,1:]

        # Now that we have a matrix without repeating triplets, we have to check if the
        # matrix of the condition contains same triplets as the control condition

        #while inBothMat:

            # check if there is any row (triplet) in control condition matrix contained in
            # experimental condition matrix (output is logical)
            #elems_in_exp = (out_matrix_control[None,:] == out_matrix[:,None]).all(-1).any(0)
            # if any identical triplet found...
            #if any(elems_in_exp):
                # get the index of the duplicates
                #true_elems = np.where(elems_in_exp == True)
                #true_elems = np.asarray(true_elems[0])
                # reroll triplet for the current indices
                #out_matrix_control[true_elems[0]] = np.random.choice(stimuli_digits, size = nDigits, replace = False)
                # check if the previous reroll did not lead to identical triplets in the
                # current stimuli set (control condition)
                #unique_digits, index_uniques, count_rep_digits = np.unique(out_matrix_control, axis = 0, return_index=True, return_counts=True)
                #repeated_digits = np.where(count_rep_digits > 1)
                #repeated_digits = np.asarray(repeated_digits[0])
                # if at least 1 repeated digit, replace it and so on (see comments above)
                #while len(repeated_digits) > 0:
                    #out_matrix_control[repeated_digits[0]] = np.random.choice(stimuli_digits, size = nDigits, replace = False)
                    #unique_digits, index_uniques, count_rep_digits = np.unique(out_matrix_control, axis = 0, return_index=True, return_counts=True)
                    #repeated_digits = np.where(count_rep_digits > 1)
                    #repeated_digits = np.asarray(repeated_digits[0])
                # afterwards it will check again if the previous rerolls (if any) did not
                # lead to identical triplet across conditions (since inBothMath is
                # still True).

            # if no identical triplet across conditions, exit the loop
            #else:
                    #inBothMat = False


        # once the stimulus set is done, insert the trial ID next to the triplet
        out_matrix_control = np.insert(out_matrix_control, 0, nTrials_vector, axis = 1)
        # insert labels of columns for PsychoPy to read conditions
        out_matrix_control_4xlsx = np.vstack((labels_colomn, out_matrix_control))

        # after vstack, the format of the triplets is not the one we want. It is a
        # 1 decimal string. We have to convert it in 0 decimal int.
        col = np.arange(nDigits+1)
        row = np.arange(nTrials+1)
        row = row [1:] # get rid of the first row since there are char strings
        for x in row:
            for i in col:
                out_matrix_control_4xlsx[x,i] = round(float(out_matrix_control_4xlsx[x,i]))

        # Preparing Excel files
        workbook = xlsxwriter.Workbook('Stimuli_ctrl_cond.xlsx')
        worksheet = workbook.add_worksheet()
        # Start from the first cell. Rows and columns are zero indexed.
        row = 0
        col = 0
        # Iterate over the data and write it out row by row.
        for ID_trial, digit1, digit2, digit3 in (out_matrix_control_4xlsx):
            worksheet.write(row, col, ID_trial)
            worksheet.write(row, col + 1, digit1)
            worksheet.write(row, col + 2, digit2)
            worksheet.write(row, col + 3, digit3)
            row += 1

        workbook.close()
      End Routine:
        # This chunk of code defines the order in which the tasks (NV speech vs SiN) will
        # be presented. If the current trial is a NV or SiN is randomized. However,
        # it should not have more than 3 identical tasks in consecutive order
        # (NV, NV, NV, NV, SiN is not allowed: NV has to come max. 3 times in a row).
        n_max_consecutive = 3 # Number of consecutive equal elements allowed
        nTrials_half = round(nTrials / 2) # It is actually equal to the nTrials_1Block variable

        # Create a nTrial long vector of 0 and 1 (half of the elements are 0, the other
        # half 1) and shuffle the order of the elements to have a random order of presentation.
        # 0: NV speech trial
        # 1: SiN trial
        tasks = np.ones(nTrials)
        tasks[:nTrials_half] = 0
        np.random.shuffle(tasks)

        # Gather the elems present more than 3 times in a row in a separate vector and delete them
        # from the initial vector.
        tasks_grouped = [list(g) for k, g in groupby(tasks)] # group the elements together
        consecutive = []
        consecutive_vector = []
        for i in tasks_grouped:
            if len(i) > n_max_consecutive:
                # select the consecutive elements which are above 3 times in a row
                consecutive = i[n_max_consecutive:]
                # gather the consecutive elements which are above 3 times in a row in a
                # separate vector
                consecutive_vector.append(consecutive)
                # delete them from the intial vector
                del i[n_max_consecutive:]

        # Take the initial vector and check where to put the removed elements back in order
        # to respect the "max X times in a row" condition.
        index = 0
        for i in tasks_grouped:
            if not consecutive_vector: # this condition is necessary for the last iteration.
                break
            # The length of the current consecutive elems as well as the length of the
            # next group of consecutive elems should not be equal to 3. This is needed to know
            # where we are allowed to put the removed elems back.
            print(len(tasks_grouped))
            print([index+1])
            if len(i) < n_max_consecutive and len(tasks_grouped[index]) < n_max_consecutive:
                # This condition is needed to put the 1 together and the 0 together to
                # keep the list grouped (e.g. [0,0,0], [1,1]...)
                if consecutive_vector[0][0] == tasks_grouped[index][0]:
                    # place the elem back in the initial vector
                    tasks_grouped[index].insert(0, consecutive_vector[0][0])
                    # since the elem is back in the initial vector, delete it from the other vector
                    del consecutive_vector[0][0]
                elif consecutive_vector[0][0] == tasks_grouped[index+1][0]:
                    tasks_grouped[index+1].insert(0, consecutive_vector[0][0])
                    del consecutive_vector[0][0]

            # if no elems in the sublist anymore, delete the current sublist
            if len(consecutive_vector[0]) == 0:
                del consecutive_vector[0]
            index += 1

        # get the list as a vector
        tasks_grouped_list = [item for sublist in tasks_grouped for item in sublist] # listed list as a list
        order_task_trial = np.asarray(tasks_grouped_list) # list as vector
        sys.stdout = StimOrder_file # open file for saving order of stimulation
        print(order_task_trial)
        sys.stdout = sys.__stdout__ # close file
  Routine Break
    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        # Instructions of the experiment. Subject presses enter to continue

        # set EEG marker for instructions experiment
        if use_lpt:
            port.setData(102)

        begin_expBlock = []
      Each Frame:
        # Get the pressed key of the subject
        begin_expBlock = event.getKeys(keyList=['return'])

        # Begin experiment once the subject pressed enter
        if "return" in begin_expBlock:
            # if enter is pressed, the current routine stops and we move into the next one
            continueRoutine = False
      End Routine:
        # Start playing background noise
        # ELSAS code sound_noise, fs = sf.read('constantNoise_1minute_16kHz_filtered_mono_looped.wav', dtype='float32')
        #sound_noise.play()
    TextComponent Begin
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Nun wird der erste Block starten. Insgesamt gibt es 4 Blöcke.

        Wie bei der Trainingsübung wirst Du zuerst ein kontinuierliches Geräusch hören und gleichzeitig ein Fixationskreuz sehen. Bitte das Kreuz fixieren. Solange das Kreuz sichtbar ist, bewege Dich bitte auch nicht.

        Nachher wirst du 3 Ziffern hören, die unterschiedlich verrauscht sind. Deine Aufgabe ist es, die Ziffern einzutippen, die du gehört hast.

        Sobald du bereit bist, um den ersten Block zu starten, kannst du auf "Enter " drücken.
  Routine Test
    CodeComponent code_9
      Code Type = Py
      End Routine:
        print('indiv factor = ', indiv_factor)
  Routine Exclude
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $indiv_factor
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  Routine Testing_Background_Noise
    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        # This routine is part of the practice trials and is meant to determine the
        # volume of the background noise (ask the participant if too loud / too low)

        # set EEG marker for testing the background noise
        if use_lpt:
            port.setData(90)

        # Start playing background noise
        # ELSAS code: sd.play(sound_noise, fs, loop=True)

        sound_noise.play()
      End Routine:
        # Stop the background noise
        sound_noise.stop()
    TextComponent Fixation_cross_Test
      color = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text = +
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  Routine clear_digits
    CodeComponent code_11
      Code Type = Py
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      Begin Experiment:
        # This routine is playing 10 trials of clear digit triplets. This is meant
        # for the subjects to learn how to type their response. The stimulus set is
        # fixed (always the same triplets in the same order) and can be found in
        # the excel-file "practice_trials.xlsx"

        #default variables
        firstdigit = 0
        seconddigit = 0
        thirddigit = 0

        speaker = [1,7,10,13,14,21,33,48,49,61]
        digit1 = 'Speaker1_Digit0_48kHz_filtered_mono.wav'
        digit2 = 'Speaker1_Digit0_48kHz_filtered_mono.wav'
        digit3 = 'Speaker1_Digit0_48kHz_filtered_mono.wav'
      Begin Routine:
        # Randomly choose one speaker for the current trial
        rand_speaker = (np.random.choice(speaker, size = 1))
        rand_speaker = int(rand_speaker[0])
        #print(rand_speaker)

        # Reading the current digits from xlsx file
        firstdigit = int(NFB_digit1)
        seconddigit = int(NFB_digit2)
        thirddigit = int(NFB_digit3)

        # Playing the first digit
        if firstdigit < 8:
            digit1 = 'Speaker'+str(rand_speaker)+'_Digit'+str(firstdigit)+'_48kHz_filtered_mono.wav'
        else: # here we have to change the index since there is no 7 in the stimuli
            digit1 = 'Speaker'+str(rand_speaker)+'_Digit'+str(firstdigit)+'_48kHz_filtered_mono.wav'

        # Playing the second digit
        if seconddigit < 8:
            digit2 = 'Speaker'+str(rand_speaker)+'_Digit'+str(seconddigit)+'_48kHz_filtered_mono.wav'
        else: # here we have to change the index since there is no 7 in the stimuli
            digit2 = 'Speaker'+str(rand_speaker)+'_Digit'+str(seconddigit)+'_48kHz_filtered_mono.wav'

        # Playing the third digit
        if thirddigit < 8:
            digit3 = 'Speaker'+str(rand_speaker)+'_Digit'+str(thirddigit)+'_48kHz_filtered_mono.wav'
        else: # here we have to change the index since there is no 7 in the stimuli
           digit3 = 'Speaker'+str(rand_speaker)+'_Digit'+str(thirddigit)+'_48kHz_filtered_mono.wav'
      Each Frame:
        # set EEG marker bei each digit onset
        if use_lpt:
            if Digit1_clear.status == STARTED:
                port.setData(10)
            elif Digit2_clear.status == STARTED:
                port.setData(20)
            elif Digit3_clear.status == STARTED:
                port.setData(30)
    SoundComponent Digit1_clear
      sound [set every repeat] = $digit1
      startVal [time (s)] = 0
      syncScreenRefresh = False
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    SoundComponent Digit2_clear
      sound [set every repeat] = $digit2
      startVal [condition] = $Digit1_clear.status == FINISHED
      syncScreenRefresh = False
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    SoundComponent Digit3_clear
      sound [set every repeat] = $digit3
      startVal [condition] = $Digit2_clear.status == FINISHED
      syncScreenRefresh = False
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  Routine Response_practice
    CodeComponent code_resp_keys_2
      Code Type = Py
      Begin Routine:
        # In this routine, the reponse of the subject are saved.
        # The subjects have to type the 3 digits separately (one per screen) and confirm
        # their end choice by pressing enter: digit 1 - ENTER - digit 2 - ENTER - digit 3 - ENTER
        # Output: Excel file in the data folder of PsychoPy. Note that every key pressed
        # are saved in this output file. The actual response of the subject is the reponse
        # just before the "enter" keypress

        response = ''
        theseKeys3 = []
        keyPress = []
        response_string = []
      Each Frame:
        # Collect every pressed key
        #keyPress = event.getKeys(keyList=['1','2','3','4','5','6','8','9','0', 'return'])
        keyPress = event.getKeys(keyList=['num_1','num_2','num_3','num_4','num_5','num_6', 'num_7', 'num_8','num_9','num_0', 'return'])

        # Gather the pressed key in a string vector
        response_string = "".join(key_resp_3.keys).replace('num_', '')
        #response_string = "".join(key_resp_test.keys)

        if response_string: # if response_string is not empty:
            # only disp the last pressed key to enable the subjects to do corrections
            # (their final response is the last keypress before "enter")
            response = response_string[-1]

        response_text = "Gehörte Ziffer: {}".format(response)

        if "return" in keyPress: # if "enter" key pressed
            continueRoutine = False # pass to the next iteration (digit)
      End Routine:
        # set EEG marker after each digit response
        if use_lpt:
            if response_practice.thisN == 0:
                port.setData(40)
            elif response_practice.thisN == 1:
                port.setData(50)
            elif response_practice.thisN == 2:
                port.setData(60)


        #print(response_practice.thisN)
    KeyboardComponent key_resp_3
      allowedKeys = 'num_0','num_1', 'num_2', 'num_3', 'num_4', 'num_5', 'num_6', 'num_7', 'num_8', 'num_9', 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
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    TextComponent disp_answer_3
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $response_text
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  Routine Instruction_start_Experiment
    CodeComponent code_14
      Code Type = Py
      Begin Routine:
        # This is the instruction explaining that we will gather some neural data for a
        # period of time and that the person has the stay quiet. Subject press "enter
        # to continue.

        begin_exp = []

        # set EEG marker for instruction calibration
        if use_lpt:
            port.setData(101)
      Each Frame:
        # Get the pressed key of the subject
        begin_exp = event.getKeys(keyList=['return'])

        # Begin experiment once the subject pressed enter
        if "return" in begin_exp:
            # if enter is pressed, the current routine stops and we move into the next one
            continueRoutine = False
    TextComponent Instructions_begin
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Bevor das Experiment startet, wird Deine spontane Gehirnaktivität gemessen, während Du ein kontinuierliches Geräusch hören wirst.

        Du wirst ein Fixationskreuz sehen, das Du fixieren sollst. Bewege Dich bitte nicht, solange Du das Fixationskreuz siehst.

        Wenn Du bereit bist, kannst Du auf "Enter" drücken.
  Routine Instructions_practice
    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        # This is the text welcoming the subjects to the experiment.
        # Once they read the text, they can press enter to continue.

        # set EEG marker for instruction practice block
        if use_lpt:
            port.setData(100)

        begin_exp = []
      Each Frame:
        # Get the pressed key of the subject
        begin_exp = event.getKeys(keyList=['return'])

        # Begin experiment once the subject pressed enter
        if "return" in begin_exp:
            # if enter is pressed, the current routine stops and we move into the next one
            continueRoutine = False
    TextComponent Instructions_clear_Digits
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In Kürze wirst Du mehrere Wörter hören, es werden immer 3 Ziffern nacheinander abgespielt werden, mehrmals hintereinander.

        Nachdem Du eine solche Dreier-Reihe gehört hast, kannst du die entsprechenden 3 Ziffern mit der Tastatur einzeln eintippen, die Du gehört hast. Du musst jedes Mal auf "Enter" drücken, um eine Ziffer zu bestätigen.

        Beispiel: Du hast “1”,”2”,”3” gehört, dann tippe ein: “1”, gefolgt von “ENTER”, “2” --> ENTER, “3” --> ENTER.

        Falls du während des Tippens einen Tippfehler machst, kannst du einfach eine neue Ziffer eintippen. Nur die letzte Eingabe zählt!

        Sobald du bereit bist, kannst du auf "Enter" drücken und die Trainingsphase wird anfangen.
  Routine Welcome
    CodeComponent code_8
      Code Type = Both
      Begin Routine:
        # This is the text welcoming the subjects to the experiment.
        # Once they read the text, they can press enter to continue.
        begin_exp = []
        # set EEG marker for displaying welcome text
        if use_lpt:
            port.setData(109)
      Each Frame:
        # Get the pressed key of the subject
        begin_exp = event.getKeys(keyList=['return'])

        # Begin experiment once the subject pressed enter
        if "return" in begin_exp:
            # if enter is pressed, the current routine stops and we move into the next one
            continueRoutine = False
    TextComponent Instructions_Noise
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Lieber Teilnehmer, willkommen zu unserem Experiment!

        Vielen Dank für Deine Teilnahme. In diesem Experiment geht es darum, die Rolle neuronaler Oszillationen beim Sprachverstehen zu erforschen. Du wirst eine Reihe von Sprachstimuli – Ziffern – hören, die eingebettet sein werden in Rauschen, bzw. verzerrt dargestellt werden.

        Bevor das eigentliche Experiment beginnt, wirst Du ein kontinuierliches Rauschen hören. Während des Abspielens des Geräuschs kannst du dem Versuchsleiter sagen, welche Lautstärke dir am besten passt.

        Wenn du bereit bist, kannst du auf "Enter" drücken und das Geräusch wird starten.
  Routine Next_Block
    CodeComponent code_13
      Code Type = Py
      Begin Routine:
        # At the end of the first block, there is a text saying that there is a break.
        # at the end of the second block, there is a text saying that there is a break
        # and that the experimentator will come to the room.
        # The subject can press "enter" whenever he is ready to go on

        begin_ExpBlock = []

        # changing / displaying the instruction depending on the current block finished
        instructions_next_block = ' '
        # if it is the last trial of the first block
        if nExpBlock == 1 and nExpTrials == (nTrials_half-1):
            sound_noise.stop() # Stop the background noise
            instructions_next_block = '''Du hast den ersten Block geschafft, Glückwunsch! Du kannst Dich kurz entspannen, wenn nötig.

            Sobald Du bereit bist, um den nächsten Block zu starten, kannst Du auf "Enter" drücken.

            Weiterhin gilt: Solange das Fixationskreuz sichtbar ist, bewege Dich bitte nicht.'''
        # if it is the last trial of the second block
        elif nExpBlock == 2 and nExpTrials == (nTrials-1):
            sound_noise.stop() # Stop the background noise
            instructions_next_block = '''Du hast den zweiten Block geschafft, Glückwunsch!

            Nun gibt es eine kleine Pause. Der/die VersuchsleiterIn wird in Kürze in den Raum kommen.'''
            #print(signal_trials)
        # if other trial
        else:
            continueRoutine = False
      Each Frame:
        # Get the pressed key of the subject
        begin_ExpBlock = event.getKeys(keyList=['return'])

        # Begin experiment once the subject pressed enter
        if "return" in begin_ExpBlock:
            continueRoutine = False # wait for the subject to press the key "enter"
      End Routine:
        # set EEG marker for each instruction (after 1st and 2nd block are finished)
        if use_lpt:
            if nExpTrials == (nTrials_half-1):
                port.setData(212)
            elif nExpTrials == (nTrials-1):
                port.setData(222)

        # Start playing background noise
        sound_noise.play()

        #print(signal_trials)

        # Update Trial counter
        nExpTrials += 1
        if nExpTrials == nTrials_half:
            nExpBlock += 1
    TextComponent Begin_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_next_block
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  Routine Next_Block_2
    CodeComponent code_15
      Code Type = Py
      Begin Routine:
        # At the end of the third block, there is a text saying that there is a break.
        # at the end of the fourth block, there is a text saying that the experiment is finished
        # The subject can press "enter" whenever he is ready to go on

        begin_Controlblock = []

        # changing / displaying the instruction depending on the current block finishe
        instructions_next_block = ' '
        # if it is the last trial of the first block
        if nCtrlBlock == 1 and nCtrlTrials == (nTrials_half-1):
            sound_noise.stop() # Stop the background noise
            instructions_next_block = '''Du hast den dritten Block geschafft, Glückwunsch!

            Sobald Du bereit bist, um den nächsten Block zu starten, kannst Du auf "Enter" drücken.

            Weiterhin gilt: Während das Fixationskreuz sichtbar ist, bewege Dich bitte nicht.'''

        # if it is the last trial of the second block
        elif nCtrlBlock == 2 and nCtrlTrials == (nTrials-1):
            sound_noise.stop() # Stop the background noise
            instructions_next_block = '''Das Experiment ist nun zu Ende. Vielen Dank für Deine Teilnahme!'''
            #print(signal_trials)
        # if other trial
        else:
            continueRoutine = False
      Each Frame:
        # Get the pressed key of the subject
        begin_Controlblock = event.getKeys(keyList=['return'])

        # Begin experiment once the subject pressed enter
        if "return" in begin_Controlblock:
            continueRoutine = False # wait for the subject to press the key "enter"
      End Routine:
        # set EEG marker for each instruction (after 1st and 2nd block are finished)
        if use_lpt:
            if nCtrlTrials == (nTrials_half-1):
                port.setData(233)
            elif nCtrlTrials == (nTrials-1):
                port.setData(243)

        #print(signal_trials)

        # Update Trial counter
        nCtrlTrials += 1
        if nCtrlTrials == nTrials_half:
            nCtrlBlock += 1


        # Start playing background noise
        if nCtrlBlock < 2:
            sound_noise.play()
    TextComponent Begin_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_next_block
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  Routine Questions
    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        questions = []
      Each Frame:
        # Get the pressed key of the subject
        questions = event.getKeys(keyList=['n','y'])
      End Routine:
        # choose if yes or no we replay the practice
        # Begin experiment once the subject pressed enter
        if "n" in questions:
            # if no question, we start the experiment
            practice_block.finished = True
        elif "y" in questions:
            # if there are question, repeat the practice block
            #rep_practice += 1
            continueRoutine = False
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Wenn du Fragen hast, kannst du es nun den / die VersuchsleiterIn fragen.

        Möchtest du die Trainingübung wiederholen ? [y/n]
  Routine repeat_practice
    CodeComponent code_16
      Code Type = Py
      End Routine:
        # It asks if we want to repeat the practice block. This is in case the subject
        # did not understand either the task or the way to provide his answer (or both).
        # ...Start the practice block again: press "y" (you have 20 seconds to press "y". If
        # you don't, the experiment will go on)
        # ...Don't retart it: just wait and the experiment will go on

        if key_resp_4.keys == 'j':
            practice_block.finished=0
            continueRoutine = True
        elif key_resp_4.keys == 'n':
            practice_block.finished=1
            practice_trials.finished=1
            continueRoutine = False
        else:
            practice_block.finished=1
            practice_trials.finished=1
            continueRoutine = False
    TextComponent text_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Training wiederholen ? [j/n] Bei keiner Antwort geht das Experiment in 10 Sekunden weiter.
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    KeyboardComponent key_resp_4
      allowedKeys = 'j','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = nothing
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  Routine repeat_calibration
    CodeComponent code_17
      Code Type = Py
      End Routine:
        # It asks if we want to repeat the calibration. This is in case one of the
        # following criteria is not fulfilled (check the stdout of PsychoPy):
        #...Mean should NOT be around 0 (most of the values are around 2-4)
        #...Std should be acceptable compared to the mean (e.g. by a mean of 3.58, 3 is acceptable, 18 is not)
        #...The indiv factor should be at least 2
        # Here is what to do to restart the calibration:
        # ...Start thecalibration again: press "y" (you have 20 seconds to press "y". If
        # you don't, the experiment will go on)
        # ...Don't retart it: just wait and the experiment will go on

        if key_resp_5.keys:
            calibration_block.finished=0
            continueRoutine = True
        else:
            calibration_block.finished=1
            #practice_trials.finished=1
            continueRoutine = False
    TextComponent text_5
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Kalibrierung wiederholen [j/n]? Bei nein oder keiner Antwort geht das Experiment in 10 Sekunden weiter.
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    KeyboardComponent key_resp_5
      allowedKeys = 'y'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = nothing
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Flow
  Routine Startup
  Routine Welcome
  Routine Testing_Background_Noise
  LoopInitiator practice_block loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    Routine Instructions_practice
    LoopInitiator practice_trials loopType="TrialHandler"
      conditionsFile = practice_trials.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('TrialID', 0), ('NFB_digit1', 6), ('NFB_digit2', 2), ('NFB_digit3', 4)]),
        OrderedDict([('TrialID', 1), ('NFB_digit1', 1), ('NFB_digit2', 9), ('NFB_digit3', 3)]),
        OrderedDict([('TrialID', 2), ('NFB_digit1', 8), ('NFB_digit2', 0), ('NFB_digit3', 1)]),
        OrderedDict([('TrialID', 3), ('NFB_digit1', 9), ('NFB_digit2', 6), ('NFB_digit3', 1)]),
        OrderedDict([('TrialID', 4), ('NFB_digit1', 8), ('NFB_digit2', 1), ('NFB_digit3', 5)]),
        OrderedDict([('TrialID', 5), ('NFB_digit1', 4), ('NFB_digit2', 1), ('NFB_digit3', 0)]),
        OrderedDict([('TrialID', 6), ('NFB_digit1', 9), ('NFB_digit2', 2), ('NFB_digit3', 6)]),
        OrderedDict([('TrialID', 7), ('NFB_digit1', 2), ('NFB_digit2', 3), ('NFB_digit3', 0)]),
        OrderedDict([('TrialID', 8), ('NFB_digit1', 1), ('NFB_digit2', 9), ('NFB_digit3', 2)]),
        OrderedDict([('TrialID', 9), ('NFB_digit1', 8), ('NFB_digit2', 1), ('NFB_digit3', 0)])]
      Routine clear_digits
      LoopInitiator response_practice loopType="TrialHandler"
        loopType = sequential
        nReps = nDigits
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        Routine Response_practice
      LoopTerminator response_practice
    LoopTerminator practice_trials
    Routine repeat_practice
  LoopTerminator practice_block
  LoopInitiator calibration_block loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    Routine Instruction_start_Experiment
    Routine Calibrating
    Routine repeat_calibration
  LoopTerminator calibration_block
  Routine Break
  LoopInitiator experimental_block loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    LoopInitiator exp_trials loopType="TrialHandler"
      Selected rows = $trial_nr
      conditionsFile = Stimuli_exp_cond.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('TrialID', 0), ('NFB_digit1', 5), ('NFB_digit2', 0), ('NFB_digit3', 4)]),
        OrderedDict([('TrialID', 1), ('NFB_digit1', 8), ('NFB_digit2', 4), ('NFB_digit3', 2)]),
        OrderedDict([('TrialID', 2), ('NFB_digit1', 6), ('NFB_digit2', 2), ('NFB_digit3', 0)]),
        OrderedDict([('TrialID', 3), ('NFB_digit1', 8), ('NFB_digit2', 0), ('NFB_digit3', 4)]),
        OrderedDict([('TrialID', 4), ('NFB_digit1', 9), ('NFB_digit2', 5), ('NFB_digit3', 1)]),
        OrderedDict([('TrialID', 5), ('NFB_digit1', 6), ('NFB_digit2', 2), ('NFB_digit3', 1)]),
        OrderedDict([('TrialID', 6), ('NFB_digit1', 0), ('NFB_digit2', 6), ('NFB_digit3', 2)]),
        OrderedDict([('TrialID', 7), ('NFB_digit1', 6), ('NFB_digit2', 0), ('NFB_digit3', 1)]),
        OrderedDict([('TrialID', 8), ('NFB_digit1', 4), ('NFB_digit2', 3), ('NFB_digit3', 8)]),
        OrderedDict([('TrialID', 9), ('NFB_digit1', 0), ('NFB_digit2', 3), ('NFB_digit3', 5)]),
        OrderedDict([('TrialID', 10), ('NFB_digit1', 6), ('NFB_digit2', 2), ('NFB_digit3', 9)]),
        OrderedDict([('TrialID', 11), ('NFB_digit1', 9), ('NFB_digit2', 2), ('NFB_digit3', 6)]),
        OrderedDict([('TrialID', 12), ('NFB_digit1', 6), ('NFB_digit2', 0), ('NFB_digit3', 3)]),
        OrderedDict([('TrialID', 13), ('NFB_digit1', 1), ('NFB_digit2', 9), ('NFB_digit3', 5)]),
        OrderedDict([('TrialID', 14), ('NFB_digit1', 8), ('NFB_digit2', 4), ('NFB_digit3', 3)]),
        OrderedDict([('TrialID', 15), ('NFB_digit1', 6), ('NFB_digit2', 2), ('NFB_digit3', 4)]),
        OrderedDict([('TrialID', 16), ('NFB_digit1', 3), ('NFB_digit2', 1), ('NFB_digit3', 0)])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
      Routine signal_check
      Routine digits_played
      LoopInitiator response_exp loopType="TrialHandler"
        loopType = sequential
        nReps = nDigits
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        Routine Response_subjects
      LoopTerminator response_exp
      Routine Next_Block
    LoopTerminator exp_trials
  LoopTerminator experimental_block
  LoopInitiator control_block loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    LoopInitiator ctrl_trials loopType="TrialHandler"
      Selected rows = $trial_nr_ctrl
      conditionsFile = Stimuli_ctrl_cond.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('TrialID', 0), ('NFB_digit1', 2), ('NFB_digit2', 3), ('NFB_digit3', 9)]),
        OrderedDict([('TrialID', 1), ('NFB_digit1', 4), ('NFB_digit2', 8), ('NFB_digit3', 6)]),
        OrderedDict([('TrialID', 2), ('NFB_digit1', 8), ('NFB_digit2', 3), ('NFB_digit3', 9)]),
        OrderedDict([('TrialID', 3), ('NFB_digit1', 2), ('NFB_digit2', 1), ('NFB_digit3', 0)]),
        OrderedDict([('TrialID', 4), ('NFB_digit1', 5), ('NFB_digit2', 8), ('NFB_digit3', 3)]),
        OrderedDict([('TrialID', 5), ('NFB_digit1', 6), ('NFB_digit2', 9), ('NFB_digit3', 2)]),
        OrderedDict([('TrialID', 6), ('NFB_digit1', 9), ('NFB_digit2', 1), ('NFB_digit3', 0)]),
        OrderedDict([('TrialID', 7), ('NFB_digit1', 4), ('NFB_digit2', 2), ('NFB_digit3', 9)]),
        OrderedDict([('TrialID', 8), ('NFB_digit1', 2), ('NFB_digit2', 4), ('NFB_digit3', 5)]),
        OrderedDict([('TrialID', 9), ('NFB_digit1', 1), ('NFB_digit2', 2), ('NFB_digit3', 9)]),
        OrderedDict([('TrialID', 10), ('NFB_digit1', 2), ('NFB_digit2', 0), ('NFB_digit3', 3)]),
        OrderedDict([('TrialID', 11), ('NFB_digit1', 3), ('NFB_digit2', 5), ('NFB_digit3', 0)]),
        OrderedDict([('TrialID', 12), ('NFB_digit1', 2), ('NFB_digit2', 5), ('NFB_digit3', 0)]),
        OrderedDict([('TrialID', 13), ('NFB_digit1', 2), ('NFB_digit2', 0), ('NFB_digit3', 6)]),
        OrderedDict([('TrialID', 14), ('NFB_digit1', 3), ('NFB_digit2', 2), ('NFB_digit3', 4)]),
        OrderedDict([('TrialID', 15), ('NFB_digit1', 6), ('NFB_digit2', 4), ('NFB_digit3', 5)]),
        OrderedDict([('TrialID', 16), ('NFB_digit1', 2), ('NFB_digit2', 1), ('NFB_digit3', 5)])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
      Routine signal_check_2
      Routine digits_played_2
      LoopInitiator response_ctrl loopType="TrialHandler"
        loopType = sequential
        nReps = nDigits
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        Routine Response_subjects_2
      LoopTerminator response_ctrl
      Routine Next_Block_2
    LoopTerminator ctrl_trials
  LoopTerminator control_block
